<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:aeon-video="clr-namespace:Aeon.Video;assembly=Aeon.Video"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>18474551</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Both</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CameraInput</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ThresholdValue" Category="Tracking Params" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Image processing</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ThresholdValue" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BackgroundSubtraction">
                <cv:BackgroundFrames>100</cv:BackgroundFrames>
                <cv:AdaptationRate>0</cv:AdaptationRate>
                <cv:ThresholdValue>100</cv:ThresholdValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
                <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetAnimalPosition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxSimple</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>300</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>AnimalBinary</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Centroid" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
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              </Builder>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Y</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="14" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>AnimalPosition</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>36</cv:Width>
            <cv:Height>36</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>AsyncPulse</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Zone1 and 2 reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>180</cv:X>
                  <cv:Y>34</cv:Y>
                  <cv:Width>950</cv:Width>
                  <cv:Height>950</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BackgroundSubtraction">
                <cv:BackgroundFrames>100</cv:BackgroundFrames>
                <cv:AdaptationRate>0</cv:AdaptationRate>
                <cv:ThresholdValue>30</cv:ThresholdValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
                <cv:SubtractionMethod>Absolute</cv:SubtractionMethod>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>500000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Zone1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>In Zone1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>180</cv:X>
                  <cv:Y>34</cv:Y>
                  <cv:Width>950</cv:Width>
                  <cv:Height>950</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BackgroundSubtraction">
                <cv:BackgroundFrames>100</cv:BackgroundFrames>
                <cv:AdaptationRate>0</cv:AdaptationRate>
                <cv:ThresholdValue>30</cv:ThresholdValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
                <cv:SubtractionMethod>Absolute</cv:SubtractionMethod>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>500000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Zone2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>In Zone2</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Zone 1 reward</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Zone 2 reward</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>ExperimentEvents</rx:Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Zone 1 reward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TimeToTrigger" DisplayName="TimeToTrigger1" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>WaitForZone1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>In Zone1</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>In Roi 0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ExperimentEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>In Zone1</Name>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="BitwiseNot" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>In Zone1</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DueTime" DisplayName="TimeToTrigger" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>Trigger pump 1</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="ExternalizedMapping">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="Combinator">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="Combinator">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="MemberSelector">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="Combinator">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="Combinator">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>InterruptStop</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:SubscribeWhen" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>l100</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="port:SerialWriteLine">
                                  <port:PortName>COM3</port:PortName>
                                  <port:NewLine>\r</port:NewLine>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Device Events</Name>
                              </Expression>
                              <Expression xsi:type="beh:Parse">
                                <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Seconds</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>CameraFrame</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(Item1 as PumpMessage,Item2 as HarpTimestamp, Item3 as CameraFrame, Item4 as ManualReward)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>PumpTrigger1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="MulticastSubject">
                                  <Name>Pump1Count</Name>
                                </Builder>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="6" To="8" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="16" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="16" Label="Source2" />
                              <Edge From="14" To="16" Label="Source3" />
                              <Edge From="15" To="16" Label="Source4" />
                              <Edge From="16" To="17" Label="Source1" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="20" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="11" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="13" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>WaitForZone2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>In Zone2</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>In Roi 1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ExperimentEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>In Zone2</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>In Zone2</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="rx:CreateObservable">
                            <Name>Trigger pump 2</Name>
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="11" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Count" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Zone 2 reward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TimeToTrigger" DisplayName="TimeToTrigger2" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>WaitForZone2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>In Zone2</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>In Roi 1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ExperimentEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>In Zone2</Name>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="BitwiseNot" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>In Zone2</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DueTime" DisplayName="TimeToTrigger" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>Trigger pump 2</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="ExternalizedMapping">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="Combinator">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="WorkflowInput">
                                  <Name>Source2</Name>
                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="Combinator">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="MemberSelector">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="Combinator">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>InterruptStop</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:SubscribeWhen" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>r100</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="port:SerialWriteLine">
                                  <port:PortName>COM3</port:PortName>
                                  <port:NewLine>\r</port:NewLine>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Device Events</Name>
                              </Expression>
                              <Expression xsi:type="beh:Parse">
                                <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Seconds</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>CameraFrame</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>new(Item1 as PumpMessage,Item2 as HarpTimestamp, Item3 as CameraFrame, Item4 as ManualReward)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>PumpTrigger1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="6" To="8" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="16" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="16" Label="Source2" />
                              <Edge From="14" To="16" Label="Source3" />
                              <Edge From="15" To="16" Label="Source4" />
                              <Edge From="16" To="17" Label="Source1" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="11" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="13" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>WaitForZone1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>In Zone1</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>In Roi 0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ExperimentEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>In Zone1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>In Zone1</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="rx:CreateObservable">
                            <Name>Trigger pump 1</Name>
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="11" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Save Pump1</Name>
              <Description>Save Pump1 + manual pump 1 (N)</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Pump1Name</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Overwrite" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Suffix" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PumpTrigger1</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Users\Bendor Lab\Documents\data\Data\M26021\20260909\M26021_Rest_Pump.csv</io:FileName>
                    <io:Delimiter>,</io:Delimiter>
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>N</wie:Filter>
                      <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>L100</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:SerialWriteLine">
                      <port:PortName>COM3</port:PortName>
                      <port:NewLine>\r</port:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Device Events</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFrame</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item1 as PumpMessage,Item2 as HarpTimestamp, Item3 as CameraFrame, Item4 as ManualReward)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>PumpTrigger1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PumpTrigger1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Reward Count</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>M</wie:Filter>
                      <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>R100</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:SerialWriteLine">
                      <port:PortName>COM3</port:PortName>
                      <port:NewLine>\r</port:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Device Events</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFrame</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item1 as PumpMessage,Item2 as HarpTimestamp, Item3 as CameraFrame, Item4 as ManualReward)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PumpTrigger1</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="5" Label="Source3" />
                  <Edge From="4" To="5" Label="Source4" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="13" Label="Source1" />
                  <Edge From="9" To="17" Label="Source1" />
                  <Edge From="9" To="20" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="13" To="15" Label="Source1" />
                  <Edge From="14" To="22" Label="Source1" />
                  <Edge From="15" To="22" Label="Source2" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="22" Label="Source3" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source4" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="35" Label="Source1" />
                  <Edge From="31" To="39" Label="Source1" />
                  <Edge From="31" To="42" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source2" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="35" To="37" Label="Source1" />
                  <Edge From="36" To="44" Label="Source1" />
                  <Edge From="37" To="44" Label="Source2" />
                  <Edge From="38" To="39" Label="Source2" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="44" Label="Source3" />
                  <Edge From="41" To="42" Label="Source2" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="44" Label="Source4" />
                  <Edge From="44" To="45" Label="Source1" />
                  <Edge From="45" To="46" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Save Pump2</Name>
                <Description>Save Pump1 + manual pump 2 (M)</Description>
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="12" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>1</cv:BackgroundFrames>
          <cv:AdaptationRate>1</cv:AdaptationRate>
          <cv:ThresholdValue>33</cv:ThresholdValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
          <cv:SubtractionMethod>Absolute</cv:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>MobilityPixelChange</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CameraFrame</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>112</cv:X>
            <cv:Y>12</cv:Y>
            <cv:Width>950</cv:Width>
            <cv:Height>950</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>AnimalPosition</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>AsyncPulse</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>TimeToTrigger</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton Back Tab A H I Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>InterruptStop</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StimulusID" Category="Filename" />
        <Property Name="MouseID" Category="Filename" />
        <Property Name="SavingDirBase" Category="Filename" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Generate File Names</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimulusID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>POST</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MouseID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>M26021</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SavingDirBase" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\Bendor Lab\Documents\data</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{2}\Data\{1}\{3}\{1}_{0}</Format>
              <Selector>Item1,Item2,Item3,Item4</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_BehaviourLog.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BehaviourName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Pump2.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Pump2Name</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Pump.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Pump1Name</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Video.avi</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VideoName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Position.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PositionName</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonSource">
              <ipy:Script>from System import DateTime,String

@returns(String)
def generate(): 
  yield (DateTime.Now).ToString("yyyyMMdd")</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DateDir</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source3" />
            <Edge From="6" To="7" Label="Source4" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="13" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="10" To="17" Label="Source1" />
            <Edge From="10" To="19" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>WheelLogging</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>BehaviourLog</Name>
              <Description>BehaviourLog</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BehaviourName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Overwrite" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Suffix" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BehaviourLog</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Users\Bendor Lab\Documents\data\Data\M26021\20260909\M26021_Rest_BehaviourLog.csv</io:FileName>
                    <io:Delimiter>,</io:Delimiter>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Device Events</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFrame</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>AnimalPosition</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>AsyncPulse</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MobilityPixelChange</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Zone1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Zone2</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Device Events</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item2 as HarpTimestamp, Item1.Item2 as CameraFrame, Item1.Item3.Item1 as XPosition, Item1.Item3.Item2 as YPosition, Item1.Item4 as AsyncPulse, Item1.Item5 as MobilityPixelChange, Item1.Item6 as InZone1, Item1.Item7 as InZone2)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>BehaviourLog</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="5" Label="Source3" />
                  <Edge From="4" To="5" Label="Source4" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="15" Label="Source1" />
                  <Edge From="9" To="15" Label="Source2" />
                  <Edge From="10" To="15" Label="Source3" />
                  <Edge From="11" To="15" Label="Source5" />
                  <Edge From="12" To="15" Label="Source6" />
                  <Edge From="13" To="15" Label="Source7" />
                  <Edge From="14" To="15" Label="Source8" />
                  <Edge From="15" To="19" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>PositionLog</Name>
                <Description>BehaviourLog</Description>
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              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>VideoSaving</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Overwrite" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Suffix" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraInput</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName>C:\Users\Bendor Lab\Documents\data\Data\M26021\20260909\M26021_Rest_Video.avi</cv:FileName>
                      <cv:Suffix>Timestamp</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>60</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ElementType</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="5" Label="Source3" />
                  <Edge From="4" To="5" Label="Source4" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>MButton Back Clear D H L Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton MButton XButton1 A D E Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Manual reward Pump1 (N)</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Manual reward Pump2 (M)</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Harp based Camera Trigger</Name>
        <Description>Harp based Camera Trigger

Press Shift + L to start camera (start experiment)
Press Shift + T to stop camera (end experiment)</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Annotation">
              <Name>2</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Camera0Frequency" />
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateCamera0FrequencyPayload">
                <beh:Camera0Frequency>60</beh:Camera0Frequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>3</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                <beh:StartCameras>CameraOutput0</beh:StartCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>4</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>MButton ShiftKey Capital CapsLock D P T Shift</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
                <beh:StopCameras>CameraOutput0</beh:StopCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Device Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Device Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM9</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Device Events</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Device Events</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Device Events</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:AnalogData" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AnalogInput0</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AnalogInput1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Encoder</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="29" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="6" To="12" Label="Source1" />
      <Edge From="6" To="17" Label="Source1" />
      <Edge From="6" To="24" Label="Source1" />
      <Edge From="6" To="28" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="18" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="40" To="42" Label="Source1" />
      <Edge From="41" To="42" Label="Source2" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="57" To="59" Label="Source1" />
      <Edge From="57" To="60" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>