WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(DisplayDevice, WindowState)
-> GroupWorkflow DisplayAndResources
    ExternalizedMapping(DisplayDevice, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=1800
      Height=800
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Triangles
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Triangles.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=dots
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\8914_generated.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern 4"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="square pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\square pattern 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="triangle pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\triangle pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="triangle pattern 3"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\triangle pattern 3.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern 3"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern 3.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="triangle pattern 4"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\triangle pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="star pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\star pattern 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="star pattern 4"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\star pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=45Grat_12
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\45Grat_12.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=135Grat_12
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\135Grat_12.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black cross"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\black cross.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black plus"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\black plus.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white cross"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\white cross.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white plus"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\white plus.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black bar"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\black bar.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white bar"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\white bar.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="square black"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\square black.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="square white"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\square white.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot black"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot black.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot white"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot white.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot black R"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot black R.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot white R"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot white R.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot white L"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot white L.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot black L"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot black L.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid_45_6
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid_45_6.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern black 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern black 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern white 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern white 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=DynamicVideo, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Nearest, MagFilter=Nearest)
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=Textures\cube3d.obj)))
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapSphere
          RenderState=""
          ShaderUniforms=""
          BufferBindings
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\MeshMapSphere.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapGradient
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\gradient.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapVector
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\vector.frag
    -> Bonsai.Resources.LoadResources

Bonsai.Shaders.RenderFrame => #2
-> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
-> BehaviorSubject Draw2D
#2 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
#2 -> Disable GroupWorkflow FrameEventLoggers
    WorkflowInput Source1 => #0
    ExternalizedMapping(FileName(DisplayName=BehaviourFileName)) => #1
    #0, #1 -> IncludeWorkflow Events(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_WheelLog.csv) => #2
    ExternalizedMapping(FileName(DisplayName=EyeFileName)) => #3
    #2, #3 -> IncludeWorkflow EyeEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_EyeLog.csv)
    -> Disable IncludeWorkflow saveMousePos(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_saveMousePos.csv)
    -> Disable IncludeWorkflow TrialEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=ClosedLoop_Trial.csv) => #6
    ExternalizedMapping(FileName(DisplayName=PDAsyncFileName)) => #7
    #6, #7 -> IncludeWorkflow PDAsyncEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_PDAsync.csv)
    -> WorkflowOutput
-> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=20, Light(X=0, Y=0, Z=0))
-> Disable IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1)
-> Disable Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=20)
-> Disable Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=#404040, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #12
-> IncludeWorkflow
  Path=BonVision:Environment.ViewWindow.bonsai
  Width=15
  Height=19.5
  Rotation(X=0, Y=60.000001669652114, Z=0)
  Translation(X=-11.25, Y=0.25, Z=-10.505)
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=gammalut.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.34, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
#12 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0.25, Z=-17))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=gammalut.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.34, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1)))
#12 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-60.0000016696521, Z=0), Translation(X=11.25, Y=0.25, Z=-10.505))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=gammalut.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.667, Y=0, Width=0.34, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.665, Y=0, Width=0.333, Height=1)))

ExternalizedMapping(SkipRows)
-> Bonsai.IO.CsvReader(FileName=START_LOCATION_t2_v1_with_active.CSV, ListSeparator=",", SkipRows=0)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(double.Parse(it[0]) as item1,
    double.Parse(it[1]) as item2,
    double.Parse(it[2]) as item3,
    double.Parse(it[3]) as item4,
    double.Parse(it[4]) as item5,
    double.Parse(it[5]) as item6,
    double.Parse(it[6]) as item7,
    double.Parse(it[7]) as item8
    )
-> CreateObservable Trial
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject Startpos
    #0 -> MemberSelector(Selector=item2)
    -> BehaviorSubject "Reward Zone Centre Location"
    #0 -> MemberSelector(Selector=item3)
    -> BehaviorSubject "Reward Zone Size"
    #0 -> MemberSelector(Selector=item4)
    -> BehaviorSubject "Track ID"
    #0 -> MemberSelector(Selector=item5)
    -> BehaviorSubject "Lap ID"
    #0 -> MemberSelector(Selector=item6)
    -> BehaviorSubject "Lick Limit"
    #0 -> MemberSelector(Selector=item7)
    -> BehaviorSubject "Learning Type"
    #0 -> MemberSelector(Selector=item8)
    -> BehaviorSubject "GreyScreen Duration"

    GroupWorkflow "Track Trial" => #17
        SubscribeSubject WheelInput
        -> Disable Bonsai.Shaders.SampleOnUpdateFrame
        -> Bonsai.Dsp.Difference(Order=1)
        -> Condition IgnoreOverflowTicks => #3
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> LessThan(Operand=DoubleProperty(Value=1000))
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=Gain)) => #4
        #3, #4 -> Multiply(Operand=DoubleProperty(Value=0.0613))
        -> Accumulate
        -> Condition => #7
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #9
        #7, #9 -> Add(Operand=DoubleProperty(Value=-1140))
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> BehaviorSubject MousePos
        -> TakeWhile => #13
            WorkflowInput Source1 => #0
            SubscribeSubject Startpos
            -> Add(Operand=DoubleProperty(Value=140))
            -> PropertyMapping(Value) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=-1000))
            -> WorkflowOutput
        Timer(DueTime=PT2M) => #14
        #13, #14 -> TakeUntil => #15
        Timer(DueTime=PT1S) => #16
        Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel MButton XButton1 XButton2 A B C D E F G Shift", SuppressRepetitions=false) => #17
        #16, #17 -> SubscribeWhen => #18
        #15, #18 -> TakeUntil => #19
        SubscribeSubject MousePos
        -> Condition => #21
            WorkflowInput Source1
            -> LessThan(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        #19, #21 -> SkipUntil
        -> Unit
        -> Last
        -> WorkflowOutput

        GroupWorkflow "Check No Early Licks"
            SubscribeSubject RightLick
            -> Skip(Count=1)
            -> IntProperty(Value=1)
            -> Accumulate
            -> Condition "Exceed lick limit" => #4
                WorkflowInput Source1 => #0
                SubscribeSubject "Lick Limit"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            SubscribeSubject LeftLick
            -> Skip(Count=1)
            -> IntProperty(Value=1)
            -> Accumulate
            -> Condition "Exceed lick limit" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject "Lick Limit"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            #4, #9 -> Amb
            -> BooleanProperty(Value=true)
            -> First
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Unit
            -> BehaviorSubject AbortTrial
            -> WorkflowOutput

            GroupWorkflow old
                Disable SubscribeSubject LeftLick => #0
                Disable SubscribeSubject "Lick Limit"
                -> Disable PropertyMapping(Count) => #2
                #0, #2 -> Disable Skip(Count=4) => #3
                Disable SubscribeSubject RightLick => #4
                #4, #2 -> Disable Skip(Count=4) => #5
                #3, #5 -> Disable Amb
                -> Disable BooleanProperty(Value=true)
                -> Disable First
                -> Disable Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Disable Unit
                -> Disable BehaviorSubject AbortTrial
                -> Disable WorkflowOutput
                -> Disable WorkflowOutput
    GroupWorkflow "GreyScreen Trial" => #18
        SubscribeSubject WheelInput
        -> Disable Bonsai.Shaders.SampleOnUpdateFrame
        -> Bonsai.Dsp.Difference(Order=1) => #2
        ExternalizedMapping(Value(DisplayName=Gain)) => #3
        #2, #3 -> Multiply(Operand=DoubleProperty(Value=0))
        -> Accumulate
        -> Condition => #6
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #8
        #6, #8 -> Add(Operand=DoubleProperty(Value=-1140)) => #9
        SubscribeSubject "GreyScreen Duration"
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2S) => #12
        #9, #12 -> TakeUntil => #13
        SubscribeSubject Startpos
        -> Condition => #15
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        #13, #15 -> SkipUntil
        -> Disable SubscribeWhen
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> Unit
        -> Last => #20
        Disable ExternalizedMapping(Count) => #21
        #20, #21 -> Disable RepeatCount(Count=3)
        -> WorkflowOutput
    #17, #18 -> Amb => #19
    SubscribeSubject AbortTrial => #20
    SubscribeSubject SerialToSend
    -> Skip(Count=1)
    -> Take(Count=1) => #23
    #20, #23 -> TakeUntil => #24
    #19, #24 -> Merge
    -> First => #26
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=40000000, Upper=60000000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT4.5290938S)
    -> Unit => #32
    #26, #32 -> Concat
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> Last
    -> WorkflowOutput

    GroupWorkflow "Track Textures"
        GroupWorkflow Archive
            Disable GroupWorkflow blocker
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
            Disable GroupWorkflow "Track 1 Textures"
                GroupWorkflow "Track 1 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+60
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+30
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
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
                GroupWorkflow "Track 1 Texture2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+50
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
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
                GroupWorkflow "Track 1 Texture3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+70
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=4
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                          TranslationY=-1.98
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
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
                GroupWorkflow "Track 1 Texture4"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+90
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1030
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                          TranslationY=-1.98
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
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
                GroupWorkflow "Track 1 Texture5"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                    #8, #9 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                    #11, #9 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 2 Textures"
                GroupWorkflow "Track 2 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                          TranslationX=8
                          TranslationY=2
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-8
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
                GroupWorkflow "Track 2 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                    #8, #9 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #11
                    #11, #9 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 5 Aman original Track"
                GroupWorkflow "Track 3 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                          TranslationX=4
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-4
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
                GroupWorkflow "Track 3 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.88
                          TranslationY=2
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.88
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.977
                          TranslationY=2
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.88
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.97
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.88
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.97
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.88
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 4 pillar"
                GroupWorkflow "Track 4 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3070
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #2
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                          TranslationX=8
                          TranslationY=2
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-8
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
                GroupWorkflow "Track 4 pillar 1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3100
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3100.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
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                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2960.5
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                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3099.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
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                          TranslationZ=2959.5
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
                GroupWorkflow "Track 4 pillar 2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3080
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
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                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2940
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                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
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                          TranslationX=4
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                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3080.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
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                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2940.5
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                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3079.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
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                          TranslationZ=2939.5
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
                GroupWorkflow "Track 4 pillar 3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
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                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2920
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                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
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                          TranslationX=4
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                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3060.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
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                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2920.5
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                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3059.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
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                          TranslationZ=2919.5
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
                GroupWorkflow "Track 1 pillar 4"
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                      Expression: it+3040
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                          TranslationZ=2900
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                      Expression: it+3040.5
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                          TranslationZ=2900.5
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                      Expression: it+3039.5
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                          TranslationZ=2899.5
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
                GroupWorkflow "Track 4 Texture1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3040
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-7.98
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
                GroupWorkflow "Track 4 Texture2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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
                GroupWorkflow "Track 4 Texture3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3080
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=16
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                          TranslationY=-1.98
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-7.98
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
                GroupWorkflow "Track 4 Texture4"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3100
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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
            Disable GroupWorkflow "Track 3 Textures"
                GroupWorkflow "Track 3 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                          TranslationX=8
                          TranslationY=2
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-8
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
                GroupWorkflow "Track 3 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          Diffuse(X=0, Y=0, Z=0)
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                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 4 Textures"
                GroupWorkflow "Track 4 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                          TranslationX=8
                          TranslationY=2
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-8
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
                GroupWorkflow "Track 4 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow Backup
                Disable GroupWorkflow "Track 1 Textures"
                    GroupWorkflow "Track 1 Main Room"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+60
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=8
                              TranslationY=2
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-8
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
                    GroupWorkflow "Track 1 Texture1"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+30
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
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
                    GroupWorkflow "Track 1 Texture2"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+50
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
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
                    GroupWorkflow "Track 1 Texture3"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+70
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
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                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=4
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                              Diffuse(X=0, Y=0, Z=0)
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
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                              TranslationY=-1.98
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                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
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                              Diffuse(X=1, Y=1, Z=1)
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
                    GroupWorkflow "Track 1 Texture4"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+90
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-30
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                              Diffuse(X=0, Y=0, Z=0)
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
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                              TranslationY=-1.98
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                              RotationX=90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
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
                    GroupWorkflow "Track 1 Texture5"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                        #8, #9 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                        #11, #9 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 2 Textures"
                    GroupWorkflow "Track 2 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=8
                              TranslationY=2
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-8
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
                    GroupWorkflow "Track 2 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                        #8, #9 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #11
                        #11, #9 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 5 Aman original Track"
                    GroupWorkflow "Track 3 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=4
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-4
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
                    GroupWorkflow "Track 3 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.88
                              TranslationY=2
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.88
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.977
                              TranslationY=2
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.88
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.97
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.88
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.97
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.88
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 4 pillar"
                    GroupWorkflow "Track 4 Main Room"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3070
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=8
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-8
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
                    GroupWorkflow "Track 4 pillar 1"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3100
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3100.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Front
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                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2960.5
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                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3099.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #4 -> GroupWorkflow Back
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                              TranslationZ=2959.5
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
                    GroupWorkflow "Track 4 pillar 2"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3080
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Right
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                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2940
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                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #4 -> GroupWorkflow Left
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                              TranslationX=4
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                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3080.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Front
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                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2940.5
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                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3079.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #4 -> GroupWorkflow Back
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                              TranslationZ=2939.5
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
                    GroupWorkflow "Track 4 pillar 3"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Right
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                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2920
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                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #4 -> GroupWorkflow Left
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                              TranslationX=4
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                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3060.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Front
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                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2920.5
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                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3059.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #4 -> GroupWorkflow Back
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                              TranslationZ=2919.5
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
                    GroupWorkflow "Track 1 pillar 4"
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                          Expression: it+3040
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                              TranslationZ=2900
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                          Expression: it+3040.5
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                              TranslationZ=2900.5
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                          Expression: it+3039.5
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                              TranslationZ=2899.5
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
                    GroupWorkflow "Track 4 Texture1"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3040
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-7.98
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
                    GroupWorkflow "Track 4 Texture2"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
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                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
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                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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
                    GroupWorkflow "Track 4 Texture3"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3080
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=16
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
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                              TranslationY=-1.98
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                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-7.98
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
                    GroupWorkflow "Track 4 Texture4"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3100
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
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                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
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                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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
                Disable GroupWorkflow "Track 3 Textures"
                    GroupWorkflow "Track 3 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=8
                              TranslationY=2
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-8
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
                    GroupWorkflow "Track 3 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 4 Textures"
                    GroupWorkflow "Track 4 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=8
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-8
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
                    GroupWorkflow "Track 4 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

        Disable GroupWorkflow "Track 2 Right Textures" => #1
            GroupWorkflow "Track 2 Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.99
                      TranslationZ=70.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.99
                      TranslationZ=70.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=70.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture1"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+30
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=30.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=30.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=30.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture2"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+50
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=50.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=50.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=50.2544
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture3"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+70
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
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                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=70.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
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                      TranslationY=-1.98
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=3.98
                      TranslationY=2
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                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture4"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+90
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
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                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=90.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
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                      TranslationY=-1.98
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=90.2544
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture5"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=110.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=110.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> GroupWorkflow Right
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                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=110.2544
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                #11, #9 -> Disable GroupWorkflow Left
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        Disable SubscribeSubject Startpos => #2
        -> Disable LessThan(Operand=DoubleProperty(Value=0)) => #3
        #2 -> Disable GreaterThan(Operand=DoubleProperty(Value=-200)) => #4
        #3, #4 -> Disable Zip
        -> Disable Condition => #6
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #1, #6 -> Disable SubscribeWhen

        Disable GroupWorkflow "Track 1 Left Textures" => #8
            GroupWorkflow "Track 1 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.99
                      TranslationZ=70.1317749
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.99
                      TranslationZ=70.1317749
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                      TranslationX=-4
                      TranslationY=2
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                      RotationX=0
                      ScaleX=140
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=30.1317749
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=30.1317749
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
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                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=50.1317749
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=50.1317749
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=50.1317749
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
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                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=70.1317749
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationY=5.98
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                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
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                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
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                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=90.1317749
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationY=5.98
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                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=90.1317749
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture5"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=110.131775
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=110.131775
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #11
                #11, #9 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
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                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
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        Disable SubscribeSubject Startpos => #9
        -> Disable LessThan(Operand=DoubleProperty(Value=-1000)) => #10
        #9 -> Disable GreaterThan(Operand=DoubleProperty(Value=-1200)) => #11
        #10, #11 -> Disable Zip
        -> Disable Condition => #13
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #8, #13 -> Disable SubscribeWhen

        GroupWorkflow "Track 2 Right Textures" => #15
            GroupWorkflow "Track 2 Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.99
                      TranslationZ=70.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.99
                      TranslationZ=70.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=70.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture1"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+30
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=30.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=30.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=30.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture2"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+50
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=50.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=50.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=50.2544
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture3"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+70
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
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                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=70.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
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                      TranslationY=-1.98
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=3.98
                      TranslationY=2
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                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture4"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+90
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
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                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=90.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
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                      TranslationY=-1.98
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=90.2544
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture5"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=110.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=110.2544
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> GroupWorkflow Right
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                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=110.2544
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                #11, #9 -> Disable GroupWorkflow Left
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        SubscribeSubject Startpos => #16
        -> LessThan(Operand=DoubleProperty(Value=0)) => #17
        #16 -> GreaterThan(Operand=DoubleProperty(Value=-200)) => #18
        #17, #18 -> Zip
        -> Condition => #20
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #15, #20 -> SubscribeWhen

        GroupWorkflow "Track 1 Left Textures" => #22
            GroupWorkflow "Track 1 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
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                      TranslationX=-2
                      TranslationY=5.99
                      TranslationZ=70.1317749
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                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
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                      TranslationY=-1.99
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                #2 -> PropertyMapping(TranslationZ)
                -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                      TranslationX=-4
                      TranslationY=2
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                      RotationX=0
                      ScaleX=140
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
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                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=30.1317749
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationY=5.98
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                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
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                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=50.1317749
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=50.1317749
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=50.1317749
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
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                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=70.1317749
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationY=5.98
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                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
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                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
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                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=90.1317749
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationY=5.98
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                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=90.1317749
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture5"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=110.131775
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=110.131775
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #11
                #11, #9 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
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                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
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        SubscribeSubject Startpos => #23
        -> LessThan(Operand=DoubleProperty(Value=-1000)) => #24
        #23 -> GreaterThan(Operand=DoubleProperty(Value=-1200)) => #25
        #24, #25 -> Zip
        -> Condition => #27
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #22, #27 -> SubscribeWhen

    GroupWorkflow "Control and Give Reward"
        GroupWorkflow "Generate Reward Serial String"
            SubscribeSubject RightCorrect
            -> Skip(Count=1) => #1
            -> Condition "If passive"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> FloatProperty(Value=50) => #3
            #1 -> Condition "If active"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=20))
                -> WorkflowOutput
            -> FloatProperty(Value=110) => #5
            #3, #5 -> Amb
            -> Disable Take(Count=1)
            -> BehaviorSubject RightValveOpenTime

            SubscribeSubject LeftCorrect
            -> Skip(Count=1) => #10
            -> Condition "If passive"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> FloatProperty(Value=30) => #12
            #10 -> Condition "If active"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            -> FloatProperty(Value=90) => #14
            #12, #14 -> Amb
            -> Disable Take(Count=1)
            -> BehaviorSubject LeftValveOpenTime

            StringProperty(Value=l) => #18
            SubscribeSubject LeftValveOpenTime
            -> PropertyMapping(Value)
            -> FloatProperty(Value=30)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #22
              Expression: it.ToString()
            #18, #22 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> BehaviorSubject LeftRewardString

            StringProperty(Value=r) => #26
            SubscribeSubject RightValveOpenTime
            -> PropertyMapping(Value)
            -> FloatProperty(Value=50)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #30
              Expression: it.ToString()
            #26, #30 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> BehaviorSubject RightRewardString

        SubscribeSubject LeftCorrect
        -> Disable Take(Count=1) => #2
        SubscribeSubject LeftRewardString
        -> PropertyMapping(Value) => #4
        #2, #4 -> StringProperty(Value=l30) => #5
        Disable SubscribeSubject "Learning Type" => #6
        -> Disable Condition "If active + passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #8
        #6 -> Disable Condition "If not both"
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=1) => #10
        #8, #10 -> Disable Amb
        -> Disable PropertyMapping(Count) => #12
        #5, #12 -> Skip(Count=1)
        -> Take(Count=1)
        -> MulticastSubject SerialToSend

        SubscribeSubject RightCorrect
        -> Disable Take(Count=1) => #17
        SubscribeSubject RightRewardString
        -> PropertyMapping(Value) => #19
        #17, #19 -> StringProperty(Value=r50) => #20
        Disable SubscribeSubject "Learning Type" => #21
        -> Disable Condition "If active + passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #23
        #21 -> Disable Condition "If not both"
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=1) => #25
        #23, #25 -> Disable Amb
        -> Disable PropertyMapping(Count) => #27
        #20, #27 -> Skip(Count=1)
        -> Take(Count=1)
        -> MulticastSubject SerialToSend

        StringProperty(Value="")
        -> BehaviorSubject SerialToSend
        -> Disable Skip(Count=1)
        -> Disable Take(Count=1)
        -> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)

        SubscribeSubject SerialToSend
        -> Skip(Count=1)
        -> Take(Count=1)
        -> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r) => #39
        SubscribeSubject "Response Value"
        -> PropertyMapping(Value) => #41
        #39, #41 -> IntProperty(Value=1)
        -> Disable TakeUntil
        -> MulticastSubject "Correct Lap"

        SubscribeSubject RightValveOpenTime => #45
        -> Condition "If passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=50))
            -> WorkflowOutput
        -> IntProperty(Value=2) => #47
        #45 -> Condition "If active"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=110))
            -> WorkflowOutput
        -> IntProperty(Value=20) => #49
        SubscribeSubject LeftValveOpenTime => #50
        -> Condition "If passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=30))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #52
        #50 -> Condition "If active"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=90))
            -> WorkflowOutput
        -> IntProperty(Value=10) => #54
        #47, #49, #52, #54 -> Amb
        -> BehaviorSubject "Response Value"

    GroupWorkflow "Get Licks"
        Disable Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=true)
        -> Disable Unit => #1
        Disable Unit => #2
        #1, #2 -> Disable Merge
        -> Disable BehaviorSubject RightLick
        Disable Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=true)
        -> Disable Unit => #6
        #6, #2 -> Disable Merge
        -> Disable BehaviorSubject LeftLick

        GroupWorkflow "Check For Recent Licks"
            ExternalizedMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT0.05S)
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #3
            IntProperty(Value=0) => #4
            SubscribeSubject LeftLick
            -> IntProperty(Value=1) => #6
            SubscribeSubject RightLick
            -> IntProperty(Value=2) => #8
            #4, #6, #8 -> Merge
            -> Skip(Count=3)
            -> BehaviorSubject LickState
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #13
            #3, #13 -> CombineLatest
            -> Subtract
            -> Divide(Operand=DoubleProperty(Value=1000))
            -> BehaviorSubject TimeSinceLastLick

    GroupWorkflow "Performance Tracking"
        GroupWorkflow "Active Learning" => #0
            SubscribeSubject LickState
            -> PropertyMapping(Value) => #1
            Source2=#1 -> IntProperty(Value=1)
            -> Skip(Count=1)
            -> Disable First => #4
            GroupWorkflow "Reward zone info"
                SubscribeSubject InsideZone => #0
                -> Condition => #1
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #3
                #1, #3 -> IntProperty(Value=1) => #4
                #0 -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> IntProperty(Value=0) => #6
                #4, #6 -> Merge
                -> WorkflowOutput
            -> PropertyMapping(Value) => #6
            #4, #6 -> Equal(Operand=IntProperty(Value=0)) => #7
            -> Condition Correct => #8
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> Condition "Correct Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> IntProperty(Value=10)
            -> MulticastSubject LeftCorrect
            #8 -> IntProperty(Value=2)
            -> Condition "Correct Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> IntProperty(Value=20)
            -> MulticastSubject RightCorrect
            #7 -> Condition Incorrect => #17
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> Condition "Incorrect Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> MulticastSubject LeftIncorrect
            #17 -> IntProperty(Value=2)
            -> Condition "Incorrect Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> MulticastSubject RightIncorrect
        SubscribeSubject "Learning Type"
        -> Condition "If Active" => #2
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #0, #2 -> SubscribeWhen

        GroupWorkflow "Passive Learning" => #4
            SubscribeSubject Entry => #0
            -> IntProperty(Value=1)
            -> Condition "Correct Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable First
            -> MulticastSubject LeftCorrect
            #0 -> IntProperty(Value=2)
            -> Condition "Correct Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable First
            -> MulticastSubject RightCorrect
        SubscribeSubject "Learning Type"
        -> Condition "If Passive" => #6
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        #4, #6 -> SubscribeWhen

        GroupWorkflow "Track Reward Zone"
            SubscribeSubject<System.Single> MousePos => #0
            SubscribeSubject "Reward Zone Centre Location" => #1
            -> PropertyMapping(Value)
            -> IntProperty(Value=-1040) => #3
            SubscribeSubject "Reward Zone Size"
            -> PropertyMapping(Value) => #5
            #3, #5 -> Subtract(Operand=IntProperty(Value=5))
            -> PropertyMapping(Value) => #7
            #0, #7 -> GreaterThan(Operand=FloatProperty(Value=-1045)) => #8
            #1 -> PropertyMapping(Value)
            -> IntProperty(Value=-1040) => #10
            SubscribeSubject "Reward Zone Size"
            -> PropertyMapping(Value) => #12
            #10, #12 -> Add(Operand=IntProperty(Value=5))
            -> PropertyMapping(Value) => #14
            #14, #0 -> LessThan(Operand=FloatProperty(Value=-1035)) => #15
            #8, #15 -> Zip
            -> LogicalAnd => #17
            -> BehaviorSubject InsideZone
            -> WorkflowOutput
            #17 -> Disable DistinctUntilChanged
            -> Disable Skip(Count=1) => #21
            -> Disable Condition Entry
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable IntProperty(Value=1)
            -> Disable BehaviorSubject Entry
            #21 -> Disable BitwiseNot
            -> Disable Condition Exit
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> Disable BehaviorSubject Exit
            SubscribeSubject "Reward Zone Centre Location"
            -> PropertyMapping(Value)
            -> IntProperty(Value=-1040)
            -> PropertyMapping(Value) => #32
            #0, #32 -> GreaterThan(Operand=FloatProperty(Value=-1040))
            -> DistinctUntilChanged
            -> Skip(Count=1)
            -> Condition Entry
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> BehaviorSubject Entry

    Disable GroupWorkflow "Performance Calculation"
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
    GroupWorkflow "Variable to main workflow"
        SubscribeSubject "Track ID"
        -> MulticastSubject "Track ID (main)"

        SubscribeSubject LickState
        -> MulticastSubject "LickState (main)"

        SubscribeSubject MousePos
        -> MulticastSubject "MousePos (main)"

        SubscribeSubject MousePos
        -> MulticastSubject "MousePos (main)"

        SubscribeSubject "Correct Lap"
        -> MulticastSubject "Correct Lap (main)"

        SubscribeSubject "Learning Type"
        -> MulticastSubject "Learning Type (main)"
-> Concat
-> BehaviorSubject "End of lap" => #30
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #31
#30, #31 -> SubscribeWhen

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    BooleanProperty(Value=false)
    -> BehaviorSubject InsideZone

    IntProperty(Value=1)
    -> BehaviorSubject "Lap ID"

    Disable IntProperty(Value=1)
    -> Disable BehaviorSubject "Lick Limit"

    IntProperty(Value=0)
    -> BehaviorSubject "Track ID (main)"

    IntProperty(Value=0)
    -> BehaviorSubject "LickState (main)"

    GroupWorkflow TrialOutcomes
        IntProperty(Value=0) => #0
        -> BehaviorSubject LeftCorrect
        #0 -> BehaviorSubject RightCorrect
        #0 -> BehaviorSubject NoResponse
        #0 -> BehaviorSubject LeftIncorrect
        #0 -> BehaviorSubject RightIncorrect
        #0 -> BehaviorSubject "Correct Lap"

        IntProperty(Value=0)
        -> Skip(Count=1)
        -> BehaviorSubject TrialResults

    FloatProperty(Value=200)
    -> BehaviorSubject "MousePos (main)"

    IntProperty(Value=0) => #27
    -> BehaviorSubject "Lap count Track 1"
    #27 -> BehaviorSubject "Lap count Track 2"

    FloatProperty(Value=0) => #30
    -> BehaviorSubject "Track 1 Performance"
    #30 -> BehaviorSubject "Track 2 Performance"

    IntProperty(Value=0)
    -> BehaviorSubject "Correct Lap (main)"

    FloatProperty(Value=0)
    -> BehaviorSubject "Total reward volume"

    IntProperty(Value=0)
    -> BehaviorSubject Timestamp

    IntProperty(Value=0)
    -> BehaviorSubject "Manual reward"

    IntProperty(Value=0)
    -> BehaviorSubject "Learning Type (main)"

    FloatProperty(Value=0)
    -> PublishSubject Photodiode

Disable GroupWorkflow "Performance Calculation"
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
Disable SubscribeSubject "Correct Lap" => #35
-> Disable Condition "If Track 1 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> Disable FloatProperty(Value=1)
-> Disable Accumulate => #38
Disable SubscribeSubject "Track ID (main)" => #39
-> Disable Condition "If Track 1"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> Disable FloatProperty(Value=1)
-> Disable Accumulate
-> Disable MulticastSubject "Lap count Track 1" => #43
#38, #43 -> Disable CombineLatest
-> Disable Divide
-> Disable MulticastSubject "Track 1 Performance"
#35 -> Disable Condition "If Track 2 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=20))
    -> WorkflowOutput
-> Disable FloatProperty(Value=1)
-> Disable Accumulate => #49
#39 -> Disable Condition "If Track 2"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=2))
    -> WorkflowOutput
-> Disable FloatProperty(Value=1)
-> Disable Accumulate
-> Disable MulticastSubject "Lap count Track 2" => #53
#49, #53 -> Disable CombineLatest
-> Disable Divide
-> Disable MulticastSubject "Track 2 Performance"

Disable SubscribeSubject "Correct Lap" => #57
-> Disable Condition "If Track 1 passive"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> Disable FloatProperty(Value=10) => #59
#57 -> Disable Condition "If Track 1 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> Disable FloatProperty(Value=50) => #61
#57 -> Disable Condition "If Track 2 passive"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=2))
    -> WorkflowOutput
-> Disable FloatProperty(Value=10) => #63
#57 -> Disable Condition "If Track 2 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> Disable FloatProperty(Value=50) => #65
#59, #61, #63, #65 -> Disable Merge
-> Disable Accumulate
-> Disable MulticastSubject "Total reward volume"

GroupWorkflow Arduino => #69
    Bonsai.IO.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM4
      BaudRate=1000000
      Encoding=utf-8
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Disable SubscribeSubject SerialToSend
    -> Disable Skip(Count=1)
    -> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)
    -> Disable IntProperty(Value=1)
    -> Disable Accumulate

    ExternalizedMapping(PortName)
    -> Bonsai.IO.SerialStringRead(PortName=ArduinoSerial, NewLine=\n)
    -> Parse(Pattern="%i,%i,%i,%i,%i,%i")
    -> Retry => #9
    -> MemberSelector(Selector=Item2) => #10
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #9 -> MemberSelector(Selector=Item3) => #13
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick
    #9 -> MemberSelector(Selector=Item1)
    -> BehaviorSubject WheelInput => #17
    #9 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #19
    SubscribeSubject QuadState => #20
    #19, #20 -> WithLatestFrom => #21
    -> MemberSelector(Selector=Item2) => #22
    #21 -> MemberSelector(Selector=Item1) => #23
    SubscribeSubject EyeFrameCount => #24
    #23, #24 -> WithLatestFrom => #25
    -> MemberSelector(Selector=Item2) => #26
    #9 -> MemberSelector(Selector=Item6)
    -> MulticastSubject Timestamp
    -> BehaviorSubject ArduinoTime => #29
    #25 -> MemberSelector(Selector=Item1) => #30
    SubscribeSubject "MousePos (main)" => #31
    #30, #31 -> WithLatestFrom => #32
    -> MemberSelector(Selector=Item2) => #33
    #32 -> MemberSelector(Selector=Item1) => #34
    SubscribeSubject SyncPulse => #35
    #34, #35 -> WithLatestFrom => #36
    -> MemberSelector(Selector=Item2) => #37
    #36 -> MemberSelector(Selector=Item1) => #38
    SubscribeSubject Photodiode => #39
    #38, #39 -> WithLatestFrom => #40
    -> MemberSelector(Selector=Item2) => #41
    #40 -> MemberSelector(Selector=Item1) => #42
    SubscribeSubject VideoLEDAsync => #43
    #42, #43 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #45
    #33, #37, #41, #45 -> Zip => #46
    #17, #10, #13, #22, #26, #29, #46 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(Item1 as Wheel, Item2 as LickL, Item3 as LickR, Item4 as QuadState, Item5 as EyeFrameCount, Item6 as Time, Item7 as Position)
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    #9 -> Disable GroupWorkflow "Temp photodiode and syncpulse"
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item4)
        -> MulticastSubject SyncPulse
        #0 -> MemberSelector(Selector=Item5)
        -> MulticastSubject Photodiode

    GroupWorkflow "Manual reward control"(Description="A for left D for right")
        Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
        -> StringProperty(Value=l30)
        -> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)
        -> IntProperty(Value=1)
        -> MulticastSubject "Manual reward"

        Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
        -> StringProperty(Value=r45)
        -> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)
        -> IntProperty(Value=2)
        -> MulticastSubject "Manual reward"

    GroupWorkflow AnalogOutputs
        Bonsai.IO.SerialStringRead(PortName=ArduinoAnalog, NewLine=\n) => #0
        -> Parse(Pattern="%i,%i")
        -> Retry => #2
        -> MemberSelector(Selector=Item1)
        -> Disable BehaviorSubject Photodiode
        -> MulticastSubject Photodiode => #5
        #2 -> MemberSelector(Selector=Item2)
        -> Disable BehaviorSubject SyncPulse
        -> MulticastSubject SyncPulse => #8
        #5, #8 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as Photodiode, Item2 as SyncPulse, Item3 as Time)
        -> Disable IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector="Photodiode,SyncPulse,Time")
        SubscribeSubject Photodiode => #12
        SubscribeSubject SyncPulse => #13
        #0 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #15
        #12, #13, #15 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as P, Item2 as S, Item3 as T)
        -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector=nil)

        Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as Photodiode, Item2 as SyncPulse, Item3 as Time)
        -> Disable IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector="Photodiode,SyncPulse,Time")

        Bonsai.IO.CreateSerialPort
          Name=ArduinoAnalog
          PortName=COM5
          BaudRate=250000
          Encoding=utf-8
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1
Bonsai.Windows.Input.KeyDown(Filter="RButton B Shift", SuppressRepetitions=false) => #70
#69, #70 -> SubscribeWhen
Disable GroupWorkflow EyeCamera => #72
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#72, #70 -> SubscribeWhen

GroupWorkflow Logging => #74
    GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
        SubscribeSubject VideoCSVName
        -> PropertyMapping(FileName) => #1
        ExternalizedMapping(Overwrite) => #2
        ExternalizedMapping(Suffix) => #3
        SubscribeSubject VideoLog => #4
        #1, #2, #3, #4 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Bendor Lab\Documents\data\Data\test\20260909\SparseNoise_test_Video.csv"
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        SubscribeSubject "Device Events"
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame)
        -> MemberSelector(Selector=Seconds) => #8
        Disable Bonsai.Spinnaker.SpinnakerCapture(Index=0, SerialNumber=26312603, ColorProcessing=Default)
        -> Aeon.Video.SpinnakerCapture(Index=nil, SerialNumber=26312603, ColorProcessing=Default, ExposureTime=15000, Gain=10, Binning=1)
        -> MemberSelector(Selector=Image)
        -> Bonsai.Vision.Flip(Mode=Both) => #12
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Add(Operand=IntProperty(Value=1))
        -> BehaviorSubject CameraFrame => #16
        #8, #16 -> Zip => #17
        SubscribeSubject "Device Events"
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame)
        -> MemberSelector(Selector=Seconds) => #21
        #17, #21 -> WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item2 as HarpTimestamp, Item1.Item2 as CameraFrame)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item2 as HarpTimestamp, Item1.Item2 as CameraFrame)
        -> PublishSubject VideoLog
        SubscribeSubject BodyVideoName
        -> PropertyMapping(FileName) => #27
        #12, #27 -> Bonsai.Vision.VideoWriter
          FileName="C:\Users\Bendor Lab\Documents\data\Data\test\20260909\SparseNoise_test_Video.avi"
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=60
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        #12 -> Timestamp
        -> TimeInterval

    Disable GroupWorkflow "PeripheralLogger (1000Hz)"(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
        SubscribeSubject PeriName
        -> PropertyMapping(FileName) => #1
        ExternalizedMapping(Overwrite) => #2
        ExternalizedMapping(Suffix) => #3
        ExternalizedMapping(Name)
        -> SubscribeSubject PeripheralLog => #5
        #1, #2, #3, #5 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Bendor Lab\Documents\data\Data\Masa\20260618\Checkboard_Masa_PeripheralLog.csv"
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        SubscribeSubject "Device Events" => #7
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds) => #9
        #7 -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData) => #10
        -> MemberSelector(Selector=AnalogInput0) => #11
        #10 -> MemberSelector(Selector=Encoder)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression: Convert.ToInt32(it)
        -> Skip(Count=1) => #14
        #13, #14 -> Zip
        -> OverflowDifference
        -> Accumulate => #17
        #9, #11, #17 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as HarpTimestamp, Item2 as Photodiode, Item3 as Wheel, Item4 as RenderFrame, Item5 as CameraFrame)
        -> PublishSubject PeripheralLog

    GroupWorkflow PDLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
        SubscribeSubject PDname
        -> PropertyMapping(FileName) => #1
        ExternalizedMapping(Overwrite) => #2
        ExternalizedMapping(Suffix) => #3
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #5
        #1, #2, #3, #5 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Bendor Lab\Documents\data\Data\test\20260909\SparseNoise_test_PDLog.csv"
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        SubscribeSubject CameraFrame

        SubscribeSubject "Device Events" => #8
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds) => #10
        #8 -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData)
        -> MemberSelector(Selector=AnalogInput0) => #12
        #10, #12 -> Zip => #13
        SubscribeSubject QuadState => #14
        #13, #14 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as HarpTimestamp, Item1.Item2 as Photodiode,Item2 as QuadState)
        -> PublishSubject PDLog

    GroupWorkflow PeripheralLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
        SubscribeSubject PeriName
        -> PropertyMapping(FileName) => #1
        ExternalizedMapping(Overwrite) => #2
        ExternalizedMapping(Suffix) => #3
        ExternalizedMapping(Name)
        -> SubscribeSubject PeripheralLog => #5
        #1, #2, #3, #5 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Bendor Lab\Documents\data\Data\test\20260909\SparseNoise_test_PeripheralLog.csv"
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        SubscribeSubject "Device Events"
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame)
        -> MemberSelector(Selector=Seconds) => #9
        SubscribeSubject "Device Events" => #10
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds) => #12
        #10 -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData) => #13
        -> MemberSelector(Selector=AnalogInput0) => #14
        #13 -> MemberSelector(Selector=Encoder)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
          Expression: Convert.ToInt32(it)
        -> Skip(Count=1) => #17
        #16, #17 -> Zip
        -> OverflowDifference
        -> Accumulate => #20
        #12, #14, #20 -> Zip => #21
        #9, #21 -> WithLatestFrom => #22
        SubscribeSubject RenderFrameCount => #23
        #22, #23 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item2.Item1 as HarpTimestamp, Item1.Item2.Item2 as Photodiode, Item1.Item2.Item3 as Wheel, Item2 as RenderFrame)
        -> PublishSubject PeripheralLog
Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=true) => #75
#74, #75 -> SubscribeWhen

Bonsai.Shaders.UpdateFrame
-> PublishSubject DrawQuadSubject

Disable GroupWorkflow "Log lick events"(Description="Log lick events")
    ExternalizedMapping(FileName(DisplayName="Lick Performance FileName"))
    -> IncludeWorkflow "Lick Performance"(Path=BonVision:Logging.EventLogger.bonsai, FileName=test_data\Masa2tracks_Lick_Performance.csv, Append=false, Overwrite=false, Suffix=Timestamp)

    ExternalizedMapping(FileName(DisplayName="Reward FileName"))
    -> IncludeWorkflow Reward(Path=BonVision:Logging.EventLogger.bonsai, FileName=test_data\Masa2tracks_Reward.csv, Append=false, Overwrite=false, Suffix=Timestamp)

    ExternalizedMapping(FileName(DisplayName="Trial info FileName"))
    -> IncludeWorkflow "Trial info"(Path=BonVision:Logging.EventLogger.bonsai, FileName=test_data\Masa2tracks_Trial_info.csv, Append=false, Overwrite=false, Suffix=Timestamp)

    ExternalizedMapping(FileName(DisplayName="Manual reward FileName"))
    -> IncludeWorkflow "Manual reward log"(Path=BonVision:Logging.EventLogger.bonsai, FileName=test_data\Masa2tracks_Manual_reward.csv, Append=false, Overwrite=false, Suffix=Timestamp)

    SubscribeSubject "LickState (main)" => #8
    SubscribeSubject Timestamp => #9
    #8, #9 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #11
    SubscribeSubject "Track ID (main)" => #12
    #8, #12 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #14
    SubscribeSubject "Lap count Track 1" => #15
    #8, #15 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #17
    SubscribeSubject "Lap count Track 2" => #18
    #8, #18 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #20
    SubscribeSubject "MousePos (main)" => #21
    #8, #21 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #23
    #8, #11, #14, #17, #20, #23 -> Zip
    -> IncludeWorkflow "Lick Performance"(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    SubscribeSubject "Correct Lap" => #26
    SubscribeSubject Timestamp => #27
    #26, #27 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #29
    SubscribeSubject "Lap count Track 1" => #30
    #26, #30 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #32
    SubscribeSubject "Lap count Track 2" => #33
    #26, #33 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #35
    SubscribeSubject "Track 1 Performance" => #36
    #26, #36 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #38
    SubscribeSubject "Track 2 Performance" => #39
    #26, #39 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #41
    SubscribeSubject "MousePos (main)" => #42
    #26, #42 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #44
    #26, #29, #32, #35, #38, #41, #44 -> Zip
    -> IncludeWorkflow Reward(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    GroupWorkflow(Description="archive old logging")
        Disable SubscribeSubject "LickState (main)" => #0
        -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        Disable SubscribeSubject "Track ID (main)" => #3
        #0, #3 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #5
        Disable SubscribeSubject "Lap count Track 1" => #6
        #0, #6 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #8
        Disable SubscribeSubject "Lap count Track 2" => #9
        #0, #9 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #11
        Disable SubscribeSubject "MousePos (main)" => #12
        #0, #12 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #14
        #0, #2, #5, #8, #11, #14 -> Disable Zip
        -> Disable IncludeWorkflow "Lick Performance"(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

        Disable SubscribeSubject "Correct Lap" => #17
        -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #19
        Disable SubscribeSubject "Lap count Track 1" => #20
        #17, #20 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #22
        Disable SubscribeSubject "Lap count Track 2" => #23
        #17, #23 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #25
        Disable SubscribeSubject "Track 1 Performance" => #26
        #17, #26 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #28
        Disable SubscribeSubject "Track 2 Performance" => #29
        #17, #29 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #31
        Disable SubscribeSubject "MousePos (main)" => #32
        #17, #32 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #34
        #17, #19, #22, #25, #28, #31, #34 -> Disable Zip
        -> Disable IncludeWorkflow Reward(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    SubscribeSubject "Manual reward" => #48
    SubscribeSubject "Track ID (main)" => #49
    #48, #49 -> WithLatestFrom => #50
    -> MemberSelector(Selector=Item1) => #51
    #50 -> MemberSelector(Selector=Item2) => #52
    SubscribeSubject Timestamp => #53
    #48, #53 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #55
    SubscribeSubject "Lap count Track 1" => #56
    #48, #56 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #58
    SubscribeSubject "Lap count Track 2" => #59
    #48, #59 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #61
    SubscribeSubject "MousePos (main)" => #62
    #48, #62 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #64
    #51, #52, #55, #58, #61, #64 -> Zip
    -> Skip(Count=1)
    -> IncludeWorkflow "Manual reward log"(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    SubscribeSubject "Track ID (main)" => #68
    SubscribeSubject Timestamp => #69
    #68, #69 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #71
    SubscribeSubject "Lap count Track 1" => #72
    #68, #72 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #74
    SubscribeSubject "Lap count Track 2" => #75
    #68, #75 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #77
    SubscribeSubject "MousePos (main)" => #78
    #68, #78 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #80
    SubscribeSubject "Learning Type (main)" => #81
    SubscribeSubject "Track ID (main)" => #82
    #81, #82 -> WithLatestFrom
    -> MemberSelector(Selector=Item1) => #84
    #68, #71, #74, #77, #80, #84 -> Zip
    -> Skip(Count=2)
    -> IncludeWorkflow "Trial info"(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

Disable GroupWorkflow ArduinoSerial_New
    Bonsai.IO.CreateSerialPort
      Name=ArduinoInput
      PortName=COM6
      BaudRate=250000
      Encoding=utf-8
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=ArduinoInput, NewLine=\n)
    -> Bonsai.Shaders.SampleOnRenderFrame => #2
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 3:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i) => #4
    -> MemberSelector(Selector=Item1)
    -> PublishSubject Wheel => #6
    #4 -> MemberSelector(Selector=Item2) => #7
    #4 -> MemberSelector(Selector=Item3)
    -> MulticastSubject SyncPulse => #9
    #2 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #11
    SubscribeSubject QuadState => #12
    #11, #12 -> WithLatestFrom => #13
    -> MemberSelector(Selector=Item2) => #14
    #13 -> MemberSelector(Selector=Item1) => #15
    SubscribeSubject EyeFrameCount => #16
    #15, #16 -> WithLatestFrom => #17
    -> MemberSelector(Selector=Item2) => #18
    #17 -> MemberSelector(Selector=Item1) => #19
    SubscribeSubject MousePos => #20
    #6, #7, #9, #14, #18, #19, #20 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(Item1 as Wheel, Item2 as Lick, Item3 as Sync, Item4 as QuadState, Item5 as EyeFrameCount, Item6 as Time, Item7 as Position)
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    GroupWorkflow AnalogOutputs
        Bonsai.IO.CreateSerialPort
          Name=ArduinoAnalog
          PortName=COM14
          BaudRate=250000
          Encoding=utf-8
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1

        Bonsai.IO.SerialStringRead(PortName=ArduinoAnalog, NewLine=\n) => #1
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(bool)
                def process(value):
                  mylist = value.split("\t")

                  if len(mylist) == 2:
                    return True
                  else:
                    return False
            -> WorkflowOutput
        -> Parse(Pattern=%i\t%i) => #3
        -> MemberSelector(Selector=Item1) => #4
        #3 -> MemberSelector(Selector=Item2) => #5
        #1 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #7
        #4, #5, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as Photodiode, Item2 as SyncPulse, Item3 as Time)
        -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector="Photodiode,SyncPulse,Time")

GroupWorkflow Quad(Description=Quad) => #81
    GroupWorkflow "Black quad" => #0
        SubscribeSubject DrawQuadSubject
        -> FloatProperty(Value=0)
        -> WorkflowOutput
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=200000, Upper=500000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.0364435S)
    -> Unit => #6
    #0, #6 -> TakeUntil => #7
    GroupWorkflow "White quad" => #8
        SubscribeSubject DrawQuadSubject
        -> FloatProperty(Value=1)
        -> WorkflowOutput
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=200000, Upper=500000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.0438106S)
    -> Unit => #14
    #8, #14 -> TakeUntil => #15
    #7, #15 -> Concat
    -> Repeat
    -> MulticastSubject QuadState => #18
    -> WorkflowOutput
    #18 -> PropertyMapping(Ambient) => #20
    SubscribeSubject Draw3DStim => #21
    #20, #21 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=-0.12
      TranslationY=-0.07
      TranslationZ=0
      RotationZ=0
      RotationY=0
      RotationX=0
      ScaleX=0.03
      ScaleY=0.03
      ScaleZ=0.24
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=0
      MeshName=cube3d
Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=false) => #82
#81, #82 -> SubscribeWhen
