<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1800</gl:Width>
          <gl:Height>800</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Hidden</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:Texture2D">
              <gl:Name>DynamicVideo</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Nearest</gl:MinFilter>
              <gl:MagFilter>Nearest</gl:MagFilter>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Borders</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Top" Selector="Item1" />
          <Property Name="Bottom" Selector="Item2" />
          <Property Name="Left" Selector="Item3" />
          <Property Name="Right" Selector="Item4" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <ClearColor>Gray</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <FaceSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>9</Width>
        <Height>19</Height>
        <Rotation>
          <X>0</X>
          <Y>60.000001669652114</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>-10.9</X>
          <Y>-2.25</Y>
          <Z>-5.7</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
        <ClearColor>Gray</ClearColor>
        <GammaLut>gammalut.bmp</GammaLut>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
        <X>0</X>
        <Y>0</Y>
        <Width>0.34</Width>
        <Height>1</Height>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateRenderState">
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:ViewportState">
              <gl:X>0</gl:X>
              <gl:Y>0</gl:Y>
              <gl:Width>0.333</gl:Width>
              <gl:Height>1</gl:Height>
            </gl:StateConfiguration>
          </gl:RenderState>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>9</Width>
        <Height>19</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>-2.25</Y>
          <Z>-12</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
        <ClearColor>Gray</ClearColor>
        <GammaLut>gammalut.bmp</GammaLut>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
        <X>0.333</X>
        <Y>0</Y>
        <Width>0.34</Width>
        <Height>1</Height>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateRenderState">
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:ViewportState">
              <gl:X>0.333</gl:X>
              <gl:Y>0</gl:Y>
              <gl:Width>0.333</gl:Width>
              <gl:Height>1</gl:Height>
            </gl:StateConfiguration>
          </gl:RenderState>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>9</Width>
        <Height>19</Height>
        <Rotation>
          <X>0</X>
          <Y>-60.0000016696521</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>10.9</X>
          <Y>-2.25</Y>
          <Z>-5.7</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
        <ClearColor>Gray</ClearColor>
        <GammaLut>gammalut.bmp</GammaLut>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
        <X>0.667</X>
        <Y>0</Y>
        <Width>0.34</Width>
        <Height>1</Height>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateRenderState">
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:ViewportState">
              <gl:X>0.665</gl:X>
              <gl:Y>0</gl:Y>
              <gl:Width>0.333</gl:Width>
              <gl:Height>1</gl:Height>
            </gl:StateConfiguration>
          </gl:RenderState>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RenderFrameCount</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\Bendor Lab\Documents\data\Data\tests\M26021_test.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialGray Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                <ExtentX>5</ExtentX>
                <ExtentY>5</ExtentY>
                <LocationX>90</LocationX>
                <LocationY>-37</LocationY>
                <Layer>1</Layer>
                <Angle>0</Angle>
                <ColorR>0</ColorR>
                <ColorG>0</ColorG>
                <ColorB>0</ColorB>
                <ColorA>1</ColorA>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Period" DisplayName="FlipTime" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT0S</gl:DueTime>
          <gl:Period>PT0.5S</gl:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Mod">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Phase" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
        <ExtentX>180</ExtentX>
        <ExtentY>90</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <NumberColumns>16</NumberColumns>
        <NumberRows>8</NumberRows>
        <Phase>1</Phase>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DueTime" DisplayName="StimulusDuration" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT5M</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FinalGray Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>5</ExtentX>
              <ExtentY>5</ExtentY>
              <LocationX>-80</LocationX>
              <LocationY>-30</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>VarInIt</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>false</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>TimerExpired</Name>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="Saving Dir" />
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="StringProperty">
                    <Value>D:\Data\test\</Value>
                  </Combinator>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="rx:BehaviorSubject">
                  <Name>Saving Dir</Name>
                </Builder>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>1</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>RepCounter</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>SparseNoise_Log_.bin</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>Bin FileName</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="num:CreateRandom">
                  <num:Seed>42</num:Seed>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>Random</Name>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="FloatProperty">
                    <Value>0</Value>
                  </Combinator>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="rx:PublishSubject">
                  <Name>Photodiode</Name>
                </Builder>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>1</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>TrialProgress</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>SyncPulse</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>QuadState</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>EyeFrameCount</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>200</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>MousePos</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>0</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>VideoFrameCount</Name>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="11" To="12" Label="Source1" />
              <Edge From="13" To="14" Label="Source1" />
              <Edge From="15" To="16" Label="Source1" />
              <Edge From="17" To="18" Label="Source1" />
              <Edge From="19" To="20" Label="Source1" />
              <Edge From="21" To="22" Label="Source1" />
              <Edge From="23" To="24" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StimulusID" Category="Filename" />
        <Property Name="MouseID" Category="Filename" />
        <Property Name="SavingDirBase" Category="Filename" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Generate File Names</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimulusID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Checkboard</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MouseID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>test</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SavingDirBase" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\Bendor Lab\Documents\data</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{2}\Data\{1}\{3}\{0}_{1}</Format>
              <Selector>Item1,Item2,Item3,Item4</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_WheelLog.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Trial.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Video.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VideoCSVName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_BodyVideo.avi</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BodyVideoName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_ArduinoStim.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PWMCSVName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_PDLog.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PDname</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_PeripheralLog.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PeriName</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonSource">
              <ipy:Script>from System import DateTime,String

@returns(String)
def generate(): 
  yield (DateTime.Now).ToString("yyyyMMdd")</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DateDir</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source3" />
            <Edge From="6" To="7" Label="Source4" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="13" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="10" To="17" Label="Source1" />
            <Edge From="10" To="19" Label="Source1" />
            <Edge From="10" To="21" Label="Source1" />
            <Edge From="10" To="23" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>VideoLogger</Name>
                <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>VideoCSVName</Name>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="FileName" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Overwrite" />
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Suffix" />
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>VideoLog</Name>
                    </Expression>
                    <Expression xsi:type="io:CsvWriter">
                      <io:FileName>C:\Users\Bendor Lab\Documents\data\Data\Ellie\20260716\Checkboard_Ellie_Video.csv</io:FileName>
                      <io:Delimiter>,</io:Delimiter>
                      <io:Append>false</io:Append>
                      <io:Overwrite>false</io:Overwrite>
                      <io:Suffix>Timestamp</io:Suffix>
                      <io:IncludeHeader>true</io:IncludeHeader>
                      <io:Selector />
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Device Events</Name>
                    </Expression>
                    <Expression xsi:type="beh:Parse">
                      <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Seconds</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="spk:SpinnakerCapture">
                        <spk:Index>0</spk:Index>
                        <spk:ColorProcessing>Default</spk:ColorProcessing>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Image</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:ElementIndex" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Index</Selector>
                    </Expression>
                    <Expression xsi:type="rx:BehaviorSubject">
                      <Name>CameraFrame</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Device Events</Name>
                    </Expression>
                    <Expression xsi:type="beh:Parse">
                      <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Seconds</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:WithLatestFrom" />
                    </Expression>
                    <Expression xsi:type="scr:ExpressionTransform">
                      <scr:Expression>new(Item2 as HarpTimestamp, Item1.Item2 as CameraFrame)</scr:Expression>
                    </Expression>
                    <Expression xsi:type="rx:PublishSubject">
                      <Name>VideoLog</Name>
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="5" Label="Source1" />
                    <Edge From="2" To="5" Label="Source2" />
                    <Edge From="3" To="5" Label="Source3" />
                    <Edge From="4" To="5" Label="Source4" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="7" To="8" Label="Source1" />
                    <Edge From="8" To="14" Label="Source1" />
                    <Edge From="9" To="10" Label="Source1" />
                    <Edge From="10" To="11" Label="Source1" />
                    <Edge From="11" To="12" Label="Source1" />
                    <Edge From="12" To="13" Label="Source1" />
                    <Edge From="13" To="14" Label="Source2" />
                    <Edge From="14" To="18" Label="Source1" />
                    <Edge From="15" To="16" Label="Source1" />
                    <Edge From="16" To="17" Label="Source1" />
                    <Edge From="17" To="18" Label="Source2" />
                    <Edge From="18" To="19" Label="Source1" />
                    <Edge From="19" To="20" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>PeripheralLogger (1000Hz)</Name>
                <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>PeriName</Name>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="FileName" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Overwrite" />
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Suffix" />
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Name" />
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>PeripheralLog</Name>
                    </Expression>
                    <Expression xsi:type="io:CsvWriter">
                      <io:FileName>C:\Users\Bendor Lab\Documents\data\Data\Masa\20260618\Checkboard_Masa_PeripheralLog.csv</io:FileName>
                      <io:Delimiter>,</io:Delimiter>
                      <io:Append>false</io:Append>
                      <io:Overwrite>false</io:Overwrite>
                      <io:Suffix>Timestamp</io:Suffix>
                      <io:IncludeHeader>true</io:IncludeHeader>
                      <io:Selector />
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Device Events</Name>
                    </Expression>
                    <Expression xsi:type="beh:Parse">
                      <harp:Register xsi:type="beh:TimestampedAnalogData" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Seconds</Selector>
                    </Expression>
                    <Expression xsi:type="beh:Parse">
                      <harp:Register xsi:type="beh:AnalogData" />
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>AnalogInput0</Selector>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Encoder</Selector>
                    </Expression>
                    <Expression xsi:type="scr:ExpressionTransform">
                      <scr:Expression>Convert.ToInt32(it)</scr:Expression>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Skip">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="p1:OverflowDifference" />
                    </Expression>
                    <Expression xsi:type="rx:Accumulate" />
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="scr:ExpressionTransform">
                      <scr:Expression>new(Item1 as HarpTimestamp, Item2 as Photodiode, Item3 as Wheel, Item4 as RenderFrame, Item5 as CameraFrame)</scr:Expression>
                    </Expression>
                    <Expression xsi:type="rx:PublishSubject">
                      <Name>PeripheralLog</Name>
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="6" Label="Source1" />
                    <Edge From="2" To="6" Label="Source2" />
                    <Edge From="3" To="6" Label="Source3" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source4" />
                    <Edge From="7" To="8" Label="Source1" />
                    <Edge From="7" To="10" Label="Source1" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="9" To="18" Label="Source1" />
                    <Edge From="10" To="11" Label="Source1" />
                    <Edge From="10" To="12" Label="Source1" />
                    <Edge From="11" To="18" Label="Source2" />
                    <Edge From="12" To="13" Label="Source1" />
                    <Edge From="13" To="14" Label="Source1" />
                    <Edge From="13" To="15" Label="Source1" />
                    <Edge From="14" To="15" Label="Source2" />
                    <Edge From="15" To="16" Label="Source1" />
                    <Edge From="16" To="17" Label="Source1" />
                    <Edge From="17" To="18" Label="Source3" />
                    <Edge From="18" To="19" Label="Source1" />
                    <Edge From="19" To="20" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PDLogger</Name>
              <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PDname</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Overwrite" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Suffix" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PDLog</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Users\Bendor Lab\Documents\data\Data\Ellie\20260716\Checkboard_Ellie_PDLog.csv</io:FileName>
                    <io:Delimiter>,</io:Delimiter>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Device Events</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedAnalogData" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:AnalogData" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnalogInput0</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Device Events</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item2 as HarpTimestamp, Item1.Item2 as Photodiode)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>PDLog</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="2" To="6" Label="Source2" />
                  <Edge From="3" To="6" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source4" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="10" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="12" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="16" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PeripheralLogger</Name>
              <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PeriName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Overwrite" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Suffix" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PeripheralLog</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Users\Bendor Lab\Documents\data\Data\Ellie\20260716\Checkboard_Ellie_PeripheralLog.csv</io:FileName>
                    <io:Delimiter>,</io:Delimiter>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Device Events</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedAnalogData" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:AnalogData" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnalogInput0</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Encoder</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Convert.ToInt32(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:OverflowDifference" />
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RenderFrameCount</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Device Events</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item2 as HarpTimestamp, Item1.Item2 as Photodiode, Item1.Item3 as Wheel, Item1.Item4 as RenderFrame)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>PeripheralLog</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="2" To="6" Label="Source2" />
                  <Edge From="3" To="6" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source4" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="10" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="19" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="10" To="12" Label="Source1" />
                  <Edge From="11" To="19" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="13" To="15" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="19" Label="Source3" />
                  <Edge From="18" To="19" Label="Source4" />
                  <Edge From="19" To="23" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ArducamVideoLogger</Name>
              <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoCSVName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Overwrite" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Suffix" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoLog</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Users\Bendor Lab\Documents\data\Data\Ellie\20260716\Checkboard_Ellie_Video.csv</io:FileName>
                    <io:Delimiter>,</io:Delimiter>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Device Events</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="spk:SpinnakerCapture">
                      <spk:Index>0</spk:Index>
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Image</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>CameraFrame</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Device Events</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item2 as HarpTimestamp, Item1.Item2 as CameraFrame)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>VideoLog</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="5" Label="Source3" />
                  <Edge From="4" To="5" Label="Source4" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="18" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>MButton Back Clear D H L Shift</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Currently Arducam</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Harp based Camera Trigger</Name>
          <Description>Harp based Camera Trigger

Press Shift + L to start camera (start experiment)
Press Shift + T to stop camera (end experiment)</Description>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Annotation">
                <Name>2</Name>
                <Text><![CDATA[]]></Text>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Camera0Frequency" />
              </Expression>
              <Expression xsi:type="beh:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="beh:CreateCamera0FrequencyPayload">
                  <beh:Camera0Frequency>60</beh:Camera0Frequency>
                </harp:Payload>
              </Expression>
              <Expression xsi:type="Annotation">
                <Name>3</Name>
                <Text><![CDATA[]]></Text>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>MButton Back Clear D H L Shift</wie:Filter>
                  <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="beh:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                  <beh:StartCameras>CameraOutput0</beh:StartCameras>
                </harp:Payload>
              </Expression>
              <Expression xsi:type="Annotation">
                <Name>4</Name>
                <Text><![CDATA[]]></Text>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>MButton ShiftKey Capital CapsLock D P T Shift</wie:Filter>
                  <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="beh:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
                  <beh:StopCameras>CameraOutput0</beh:StopCameras>
                </harp:Payload>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Device Commands</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="2" Label="Source1" />
              <Edge From="1" To="2" Label="Source2" />
              <Edge From="2" To="9" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="9" Label="Source2" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source3" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Manual reward Pump1 (N)</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>N</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>l100</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>COM3</port:PortName>
                <port:NewLine>\r</port:NewLine>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Manual reward Pump2 (M)</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>r100</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>COM3</port:PortName>
                <port:NewLine>\r</port:NewLine>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpBehaviorReset</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Device Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="beh:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM9</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Device Events</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateEncoderResetPayload">
                <beh:EncoderReset>EncoderPort2</beh:EncoderReset>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateEnableEncodersPayload">
                <beh:EnableEncoders>EncoderPort2</beh:EnableEncoders>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Device Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Device Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TopBorder" Category="OrthBorder" />
        <Property Name="BottomBorder" Category="OrthBorder" />
        <Property Name="LeftBorder" Category="OrthBorder" />
        <Property Name="RightBorder" Category="OrthBorder" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Borders</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TopBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>90</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Top</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="BottomBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-90</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Bottom</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="LeftBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-180</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Left</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RightBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>180</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Right</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Borders</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="12" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source4" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Device Events</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:AnalogData" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AnalogInput0</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AnalogInput1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Encoder</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
          <LocationX>0</LocationX>
          <LocationY>0</LocationY>
          <Layer>0</Layer>
          <ExtentX>1</ExtentX>
          <ExtentY>1</ExtentY>
          <SpatialFrequency>10</SpatialFrequency>
          <TemporalFrequency>0</TemporalFrequency>
          <Phase>0</Phase>
          <Angle>0</Angle>
          <SquareWave>false</SquareWave>
          <Contrast>1</Contrast>
          <DutyCycle xsi:nil="true" />
          <Radius>1</Radius>
          <Aperture>0</Aperture>
          <Opacity>1</Opacity>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="4" To="22" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="14" Label="Source1" />
      <Edge From="9" To="18" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="29" To="39" Label="Source2" />
      <Edge From="29" To="42" Label="Source2" />
      <Edge From="31" To="38" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="43" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source2" />
      <Edge From="42" To="45" Label="Source2" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="49" To="51" Label="Source1" />
      <Edge From="50" To="51" Label="Source2" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="60" To="62" Label="Source1" />
      <Edge From="60" To="63" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>