WorkflowBuilder(Version=2.9.1)
Disable Bonsai.Shaders.CreateWindow
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-> Disable IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Disable Bonsai.Shaders.TextureResources
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-> Disable Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=Textures\cube3d.obj)))
-> Disable Bonsai.Shaders.ShaderResources
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-> Disable Bonsai.Resources.LoadResources
-> Disable WorkflowOutput

ExternalizedMapping(DisplayDevice, WindowState)
-> GroupWorkflow DisplayAndResources
    Disable ExternalizedMapping(DisplayDevice, WindowState)
    -> Disable Bonsai.Shaders.CreateWindow
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    -> Disable Bonsai.Shaders.UpdateRenderState
      RenderState
        StateConfiguration=Bonsai.Shaders.EnableState(Capability=Blend)
        StateConfiguration=Bonsai.Shaders.EnableState(Capability=DepthTest)
        StateConfiguration=Bonsai.Shaders.BlendFunctionState(SourceFactor=SrcAlpha, DestinationFactor=OneMinusSrcAlpha)
        StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Lequal)
    -> Disable IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Disable Bonsai.Shaders.TextureResources
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    -> Disable Bonsai.Shaders.MeshResources
      Meshes
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=Quad, FileName=BonVision:Models.Quad.obj)
        MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=ViewportQuad, QuadEffects=None)
        MeshConfiguration(Name=MeshMap)
        MeshConfiguration(Name=SphereMap)
    -> Disable Bonsai.Shaders.ShaderResources
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    -> Disable Bonsai.Resources.LoadResources

    Disable ExternalizedMapping(DisplayDevice, WindowState)
    -> Disable Bonsai.Shaders.CreateWindow
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    -> Disable IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Disable Bonsai.Shaders.TextureResources
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    -> Disable Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=Textures\cube3d.obj)))
    -> Disable Bonsai.Shaders.ShaderResources
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    -> Disable Bonsai.Resources.LoadResources

    ExternalizedMapping(DisplayDevice, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=3072
      Height=1920
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Triangles
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Triangles.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=dots
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\8914_generated.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern 4"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="square pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\square pattern 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="triangle pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\triangle pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="triangle pattern 3"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\triangle pattern 3.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern 3"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern 3.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="triangle pattern 4"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\triangle pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="star pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\star pattern 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="star pattern 4"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\star pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=45Grat_12
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\45Grat_12.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=135Grat_12
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\135Grat_12.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black cross"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\black cross.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black plus"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\black plus.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white cross"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\white cross.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white plus"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\white plus.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black bar"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\black bar.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white bar"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\white bar.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="square black"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\square black.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="square white"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\square white.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot black"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot black.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot white"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot white.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot black R"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot black R.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot white R"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot white R.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot white L"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot white L.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot black L"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot black L.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid_45_6
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid_45_6.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern black 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern black 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern white 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern white 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=2x2_checkerboard
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\2x2_checkerboard.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=45Grat_1_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\45Grat_1_50contrast.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=135Grat_1_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\135Grat_1_50contrast.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Green_circle
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Green_circle.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=5x5_dots
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\5x5_dots.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=brick_6_rows
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\brick_6_rows.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=brick_white_6_rows
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\brick_white_6_rows.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=HorGrat_1_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\HorGrat_1_50contrast.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Circle_horBar_white
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Circle_horBar_white.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Circle_horBar
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Circle_horBar.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=Textures\cube3d.obj)))
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapSphere
          RenderState=""
          ShaderUniforms=""
          BufferBindings
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\MeshMapSphere.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapGradient
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\gradient.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapVector
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\vector.frag
    -> Bonsai.Resources.LoadResources

Bonsai.Shaders.RenderFrame => #9
-> Disable GroupWorkflow FrameEventLoggers
    WorkflowInput Source1 => #0
    Disable ExternalizedMapping(FileName(DisplayName=BehaviourFileName)) => #1
    #0, #1 -> Disable IncludeWorkflow Events(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=D:\Data\Masa\Masa2tracks_WheelLog.csv) => #2
    Disable ExternalizedMapping(FileName(DisplayName=EyeFileName)) => #3
    #2, #3 -> Disable IncludeWorkflow EyeEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=D:\Data\Masa\Masa2tracks_EyeLog.csv) => #4
    Disable ExternalizedMapping(FileName(DisplayName=saveMousePosName)) => #5
    #4, #5 -> Disable IncludeWorkflow saveMousePos(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=D:\Data\Masa\Masa2tracks_saveMousePos.csv) => #6
    Disable ExternalizedMapping(FileName(DisplayName=TrialParamsFileName)) => #7
    #6, #7 -> Disable IncludeWorkflow TrialEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=ClosedLoop_Trial.csv) => #8
    Disable ExternalizedMapping(FileName(DisplayName=PDAsyncFileName)) => #9
    #8, #9 -> Disable IncludeWorkflow PDAsyncEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=D:\Data\Masa\Masa2tracks_PDAsync.csv) => #10
    Disable ExternalizedMapping(FileName(DisplayName="Lick Performance FileName")) => #11
    #10, #11 -> Disable IncludeWorkflow "Lick Performance"(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_Performance.csv) => #12
    Disable ExternalizedMapping(FileName(DisplayName="Reward FileName")) => #13
    #12, #13 -> Disable IncludeWorkflow Reward(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_Reward.csv)
    -> WorkflowOutput
#9 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=20, Light(X=0, Y=0, Z=0))
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=#404040, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #13
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=32, Height=20, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10.505))
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=DimGray, GammaLut=gammalut.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
#13 -> Disable PublishSubject PostDrawingRight

ExternalizedMapping(SkipRows)
-> Bonsai.IO.CsvReader(FileName=START_LOCATION_gain_zone_test.CSV, ListSeparator=",", SkipRows=0)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(double.Parse(it[0]) as item1,
    double.Parse(it[1]) as item2,
    double.Parse(it[2]) as item3,
    double.Parse(it[3]) as item4,
    double.Parse(it[4]) as item5,
    double.Parse(it[5]) as item6,
    double.Parse(it[6]) as item7,
    double.Parse(it[7]) as item8,
    iif(it.Length > 8, double.Parse(it[8]), 0.0) as item9,
    iif(it.Length > 9, double.Parse(it[9]), 0.0) as item10,
    iif(it.Length > 10, double.Parse(it[10]), 1.0) as item11
    )
-> CreateObservable Trial
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject Startpos
    #0 -> MemberSelector(Selector=item2)
    -> BehaviorSubject "Reward Zone Centre Location"
    #0 -> MemberSelector(Selector=item3)
    -> BehaviorSubject "Reward Zone Size"
    #0 -> MemberSelector(Selector=item4)
    -> BehaviorSubject "Track ID"
    #0 -> MemberSelector(Selector=item5)
    -> BehaviorSubject "Lap ID"
    #0 -> MemberSelector(Selector=item6)
    -> BehaviorSubject "Lick Limit"
    #0 -> MemberSelector(Selector=item7)
    -> BehaviorSubject "Learning Type"
    #0 -> MemberSelector(Selector=item8)
    -> BehaviorSubject "GreyScreen Duration"
    #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(item9 as Start, item10 as Length, item11 as Gain)
    -> BehaviorSubject "Gain Zone"

    GroupWorkflow "Track Trial" => #19
        Bonsai.Shaders.Input.MouseCursor
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> MemberSelector(Selector=WheelPrecise)
        -> Bonsai.Dsp.Difference(Order=1) => #3
        ExternalizedMapping(Value(DisplayName=Gain)) => #4
        #3, #4 -> Multiply(Operand=DoubleProperty(Value=3))
        -> Accumulate
        -> GroupWorkflow "Apply Gain Zone"
            WorkflowInput Source1 => #0
            SubscribeSubject "Gain Zone" => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: iif(Item2.Gain <= 0 || Item2.Length <= 0 || Item1 <= Item2.Start, Item1, iif(Item1 <= Item2.Start + Item2.Length / Item2.Gain, Item2.Start + (Item1 - Item2.Start) * Item2.Gain, Item1 + Item2.Length - Item2.Length / Item2.Gain))
            -> WorkflowOutput
        -> Condition => #8
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #10
        #8, #10 -> Add(Operand=DoubleProperty(Value=1000))
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> BehaviorSubject MousePos
        -> TakeWhile => #14
            WorkflowInput Source1 => #0
            SubscribeSubject Startpos
            -> Add(Operand=DoubleProperty(Value=140))
            -> PropertyMapping(Value) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=1140))
            -> WorkflowOutput
        Timer(DueTime=PT2M30S) => #15
        #14, #15 -> TakeUntil => #16
        SubscribeSubject MousePos
        -> Condition => #18
            WorkflowInput Source1
            -> LessThan(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        #16, #18 -> SkipUntil
        -> Unit => #20
        Disable Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=30000000, Upper=60000000)
        -> Disable Bonsai.Numerics.Permutation
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable PropertyMapping(DueTime)
        -> Disable Timer(DueTime=PT4.3992798S)
        -> Disable Unit => #26
        #20, #26 -> Disable Concat
        -> Last => #28
        Disable ExternalizedMapping(Count) => #29
        #28, #29 -> Disable RepeatCount(Count=3)
        -> WorkflowOutput

        GroupWorkflow "Check No Early Licks"
            SubscribeSubject RightLick
            -> Skip(Count=1)
            -> IntProperty(Value=1)
            -> Accumulate
            -> Condition "Exceed lick limit" => #4
                WorkflowInput Source1 => #0
                SubscribeSubject "Lick Limit"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            SubscribeSubject LeftLick
            -> Skip(Count=1)
            -> IntProperty(Value=1)
            -> Accumulate
            -> Condition "Exceed lick limit" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject "Lick Limit"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            #4, #9 -> Amb
            -> BooleanProperty(Value=true)
            -> First
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Unit
            -> BehaviorSubject AbortTrial
            -> WorkflowOutput

            Disable SubscribeSubject LeftLick => #17
            Disable SubscribeSubject "Lick Limit"
            -> Disable PropertyMapping(Count) => #19
            #17, #19 -> Disable Skip(Count=4) => #20
            Disable SubscribeSubject RightLick => #21
            #21, #19 -> Disable Skip(Count=4) => #22
            #20, #22 -> Disable Amb
            -> Disable BooleanProperty(Value=true)
            -> Disable First
            -> Disable Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable Unit
            -> Disable BehaviorSubject AbortTrial
            -> Disable WorkflowOutput

        Disable IntProperty(Value=200)
        -> Disable MulticastSubject MousePos => #34
        Disable Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel MButton XButton1 XButton2 A B C D E F G Shift", SuppressRepetitions=false) => #35
        #34, #35 -> Disable SubscribeWhen
        Disable IntProperty(Value=200)
        -> Disable MulticastSubject Startpos => #38
        #38, #35 -> Disable SubscribeWhen

        Disable BehaviorSubject Startpos
    GroupWorkflow "GreyScreen Trial" => #20
        Bonsai.Shaders.Input.MouseCursor
        -> MemberSelector(Selector=WheelPrecise)
        -> Bonsai.Dsp.Difference(Order=1) => #2
        ExternalizedMapping(Value(DisplayName=Gain)) => #3
        #2, #3 -> Multiply(Operand=DoubleProperty(Value=0))
        -> Accumulate
        -> Condition => #6
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject MousePos
        -> PropertyMapping(Value) => #8
        #6, #8 -> Add(Operand=DoubleProperty(Value=1000)) => #9
        SubscribeSubject "GreyScreen Duration"
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2S) => #12
        #9, #12 -> TakeUntil => #13
        SubscribeSubject MousePos
        -> Condition => #15
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        #13, #15 -> SkipUntil
        -> Disable SubscribeWhen
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> Unit
        -> Last => #20
        Disable ExternalizedMapping(Count) => #21
        #20, #21 -> Disable RepeatCount(Count=3)
        -> WorkflowOutput
    #19, #20 -> Amb => #21
    SubscribeSubject AbortTrial => #22
    SubscribeSubject SerialToSend
    -> Skip(Count=1)
    -> Take(Count=1) => #25
    #22, #25 -> TakeUntil => #26
    #21, #26 -> Merge
    -> First => #28
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=40000000, Upper=70000000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT4.4997195S)
    -> Unit => #34
    #28, #34 -> Concat
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> Last
    -> WorkflowOutput

    GroupWorkflow "Track Textures"
        GroupWorkflow Archive
            Disable GroupWorkflow blocker
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
            Disable GroupWorkflow "Track 1 Textures"
                GroupWorkflow "Track 1 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+60
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+30
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
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
                GroupWorkflow "Track 1 Texture2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+50
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
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
                GroupWorkflow "Track 1 Texture3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+70
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=4
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                          TranslationY=-1.98
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
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
                GroupWorkflow "Track 1 Texture4"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+90
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1030
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                          TranslationY=-1.98
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
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
                GroupWorkflow "Track 1 Texture5"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                    #8, #9 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                    #11, #9 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 2 Textures"
                GroupWorkflow "Track 2 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                          TranslationX=8
                          TranslationY=2
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-8
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
                GroupWorkflow "Track 2 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                    #8, #9 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #11
                    #11, #9 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 5 Aman original Track"
                GroupWorkflow "Track 3 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                          TranslationX=4
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-4
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
                GroupWorkflow "Track 3 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.88
                          TranslationY=2
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.88
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.977
                          TranslationY=2
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.88
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.97
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.88
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.97
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.88
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 4 pillar"
                GroupWorkflow "Track 4 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3070
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #2
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                          TranslationX=8
                          TranslationY=2
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-8
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
                GroupWorkflow "Track 4 pillar 1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3100
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3100.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
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                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2960.5
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                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3099.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
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                          TranslationZ=2959.5
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
                GroupWorkflow "Track 4 pillar 2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3080
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
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                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2940
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                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
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                          TranslationX=4
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                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3080.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
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                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2940.5
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                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3079.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
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                          TranslationZ=2939.5
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
                GroupWorkflow "Track 4 pillar 3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
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                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2920
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                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
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                          TranslationX=4
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                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3060.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
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                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2920.5
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                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3059.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
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                          TranslationZ=2919.5
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
                GroupWorkflow "Track 1 pillar 4"
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                      Expression: it+3040
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                          TranslationZ=2900
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                      Expression: it+3040.5
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                          TranslationZ=2900.5
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                      Expression: it+3039.5
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                          TranslationZ=2899.5
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
                GroupWorkflow "Track 4 Texture1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3040
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-7.98
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
                GroupWorkflow "Track 4 Texture2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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
                GroupWorkflow "Track 4 Texture3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3080
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=16
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                          TranslationY=-1.98
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-7.98
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
                GroupWorkflow "Track 4 Texture4"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3100
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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
            Disable GroupWorkflow "Track 3 Textures"
                GroupWorkflow "Track 3 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                          TranslationX=8
                          TranslationY=2
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-8
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
                GroupWorkflow "Track 3 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          Diffuse(X=0, Y=0, Z=0)
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                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 4 Textures"
                GroupWorkflow "Track 4 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                          TranslationX=8
                          TranslationY=2
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-8
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
                GroupWorkflow "Track 4 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=8
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
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                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
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                          TranslationX=3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
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                          ScaleZ=0
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                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-3.98
                          TranslationY=2
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                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow Backup
                Disable GroupWorkflow "Track 1 Textures"
                    GroupWorkflow "Track 1 Main Room"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+60
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=8
                              TranslationY=2
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-8
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
                    GroupWorkflow "Track 1 Texture1"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+30
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
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
                    GroupWorkflow "Track 1 Texture2"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+50
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
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
                    GroupWorkflow "Track 1 Texture3"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+70
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
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                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=4
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                              Diffuse(X=0, Y=0, Z=0)
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
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                              TranslationY=-1.98
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                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
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                              Diffuse(X=1, Y=1, Z=1)
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
                    GroupWorkflow "Track 1 Texture4"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+90
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-30
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                              Diffuse(X=0, Y=0, Z=0)
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
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                              TranslationY=-1.98
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                              RotationX=90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
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
                    GroupWorkflow "Track 1 Texture5"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                        #8, #9 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                        #11, #9 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 2 Textures"
                    GroupWorkflow "Track 2 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=8
                              TranslationY=2
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-8
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
                    GroupWorkflow "Track 2 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                        #8, #9 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #11
                        #11, #9 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 5 Aman original Track"
                    GroupWorkflow "Track 3 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=4
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-4
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
                    GroupWorkflow "Track 3 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.88
                              TranslationY=2
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.88
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.977
                              TranslationY=2
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.88
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.97
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.88
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.97
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.88
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 4 pillar"
                    GroupWorkflow "Track 4 Main Room"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3070
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=8
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-8
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
                    GroupWorkflow "Track 4 pillar 1"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3100
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3100.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Front
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                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2960.5
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                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3099.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #4 -> GroupWorkflow Back
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                              TranslationZ=2959.5
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
                    GroupWorkflow "Track 4 pillar 2"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3080
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Right
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                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2940
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                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #4 -> GroupWorkflow Left
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                              TranslationX=4
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                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3080.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Front
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                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2940.5
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                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3079.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #4 -> GroupWorkflow Back
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                              TranslationZ=2939.5
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
                    GroupWorkflow "Track 4 pillar 3"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Right
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                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2920
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                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #4 -> GroupWorkflow Left
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                              TranslationX=4
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                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3060.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Front
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                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2920.5
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                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3059.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #4 -> GroupWorkflow Back
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                              TranslationZ=2919.5
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
                    GroupWorkflow "Track 1 pillar 4"
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                          Expression: it+3040
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                              TranslationZ=2900
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                          Expression: it+3040.5
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                              TranslationZ=2900.5
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                          Expression: it+3039.5
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                              TranslationZ=2899.5
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
                    GroupWorkflow "Track 4 Texture1"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3040
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-7.98
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
                    GroupWorkflow "Track 4 Texture2"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
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                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
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                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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
                    GroupWorkflow "Track 4 Texture3"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3080
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=16
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
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                              TranslationY=-1.98
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                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-7.98
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
                    GroupWorkflow "Track 4 Texture4"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3100
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
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                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
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                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
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                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
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
                Disable GroupWorkflow "Track 3 Textures"
                    GroupWorkflow "Track 3 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=8
                              TranslationY=2
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-8
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
                    GroupWorkflow "Track 3 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 4 Textures"
                    GroupWorkflow "Track 4 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=8
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-8
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
                    GroupWorkflow "Track 4 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=8
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
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                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
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                              TranslationX=3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
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                              TranslationX=0
                              TranslationY=5.98
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                              ScaleZ=0
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                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
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                              TranslationX=-3.98
                              TranslationY=2
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                              RotationX=0
                            -> WorkflowOutput

        Disable GroupWorkflow "Track 2 Right Textures" => #1
            GroupWorkflow "Track 2 Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.99
                      TranslationZ=84.575
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.99
                      TranslationZ=84.575
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=84.575
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture1"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+30
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=54.5749969
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=54.5749969
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=54.5749969
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture2"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+50
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=74.575
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=74.575
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=74.575
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture3"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+70
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
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                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=94.575
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
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                      TranslationY=-1.98
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=3.98
                      TranslationY=2
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                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture4"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+90
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
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                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=114.575
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
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                      TranslationY=-1.98
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=114.575
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> Disable GroupWorkflow Left
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
            GroupWorkflow "Track 2 Texture5"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=134.575
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=134.575
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> GroupWorkflow Right
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                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=134.575
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                #11, #9 -> Disable GroupWorkflow Left
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        Disable SubscribeSubject Startpos => #2
        -> Disable LessThan(Operand=DoubleProperty(Value=0)) => #3
        #2 -> Disable GreaterThan(Operand=DoubleProperty(Value=-200)) => #4
        #3, #4 -> Disable Zip
        -> Disable Condition => #6
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #1, #6 -> Disable SubscribeWhen

        Disable GroupWorkflow "Track 2 Textures" => #8
            Disable GroupWorkflow "Track2 Spatial Modulation"
                GroupWorkflow "Track 2 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it-1070
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=-70
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                          ScaleX=140
                          ScaleY=10
                          ScaleZ=0
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=-70
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                          ScaleX=140
                          ScaleY=10
                          ScaleZ=0
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=-70
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                          ScaleX=140
                          ScaleY=10
                          ScaleZ=0
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-5
                          TranslationY=2
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                          RotationX=0
                          ScaleX=120
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
                    Disable GroupWorkflow "Track 1 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1070
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=50.30449
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                              ScaleX=140
                              ScaleY=8
                              ScaleZ=0
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              MeshName=Plane
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=50.30449
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                              ScaleX=140
                              ScaleY=8
                              ScaleZ=0
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              MeshName=Plane
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=4
                              TranslationY=2
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                              RotationX=0
                              ScaleX=120
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                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-4
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                              ScaleX=140
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
                GroupWorkflow "Track 2 Texture1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it-1110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-110
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                          ScaleX=10
                          ScaleY=10
                          ScaleZ=8
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-110
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                          ScaleX=10
                          ScaleY=10
                          ScaleZ=8
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=4.99
                          TranslationY=2
                          TranslationZ=-110
                          RotationZ=0
                          RotationY=-90
                          RotationX=0
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-4.99
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                          RotationY=90
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
                GroupWorkflow "Track 2 Texture2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it-1090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-90
                          RotationZ=0
                          RotationY=90
                          RotationX=90
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                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                          TranslationY=-1.98
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=4.99
                          TranslationY=2
                          TranslationZ=-90
                          RotationZ=0
                          RotationY=-90
                          RotationX=0
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-4.99
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                          RotationY=90
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
                GroupWorkflow "Track 2 Texture3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it-1070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-70
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                          ScaleX=10
                          ScaleY=10
                          ScaleZ=8
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-70
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                          ScaleX=10
                          ScaleY=10
                          ScaleZ=8
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=4.99
                          TranslationY=2
                          TranslationZ=-70
                          RotationZ=0
                          RotationY=-90
                          RotationX=0
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-4.99
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                          RotationY=90
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
                GroupWorkflow "Track 2 Texture4"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it-1050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-50
                          RotationZ=0
                          RotationY=90
                          RotationX=90
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                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                          TranslationY=-1.98
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=4.99
                          TranslationY=2
                          TranslationZ=-50
                          RotationZ=0
                          RotationY=-90
                          RotationX=0
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-4.99
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                          RotationY=90
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
                GroupWorkflow "Track 2 Texture5"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it-1030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-30
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                          ScaleX=10
                          ScaleY=10
                          ScaleZ=8
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-30
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                          ScaleX=10
                          ScaleY=10
                          ScaleZ=8
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                    #8, #9 -> GroupWorkflow Right
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                          TranslationX=4.98
                          TranslationY=2
                          TranslationZ=-30
                          RotationZ=0
                          RotationY=-90
                          RotationX=0
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                    #11, #9 -> GroupWorkflow Left
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                          TranslationX=-4.98
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                          RotationY=90
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
            GroupWorkflow "Track 2 Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.99
                      TranslationZ=70.0177
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.99
                      TranslationZ=70.0177
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=2
                      TranslationZ=70.0177
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                      TranslationX=-5
                      TranslationY=2
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                      RotationX=0
                      ScaleX=120
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
                Disable GroupWorkflow "Track 1 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1070
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=50.30449
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                          ScaleX=140
                          ScaleY=8
                          ScaleZ=0
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=50.30449
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                          ScaleX=140
                          ScaleY=8
                          ScaleZ=0
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                          TranslationX=4
                          TranslationY=2
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                          RotationX=0
                          ScaleX=120
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                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-4
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                          ScaleX=140
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
            GroupWorkflow "Track 2 Texture1"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=30.0177
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=30.0177
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=4.99
                      TranslationY=2
                      TranslationZ=30.0177
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.99
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                      RotationY=90
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
            GroupWorkflow "Track 2 Texture2"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=50.0177
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=50.0177
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=4.99
                      TranslationY=2
                      TranslationZ=50.0177
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.99
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                      RotationY=90
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
            GroupWorkflow "Track 2 Texture3"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
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                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=70.0177
                      RotationZ=0
                      RotationY=90
                      RotationX=90
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
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                      TranslationY=-1.98
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=4.99
                      TranslationY=2
                      TranslationZ=70.0177
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.99
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                      RotationY=90
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
            GroupWorkflow "Track 2 Texture4"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
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                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=90.0177
                      RotationZ=0
                      RotationY=90
                      RotationX=90
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
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                      TranslationY=-1.98
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=4.99
                      TranslationY=2
                      TranslationZ=90.0177
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.99
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                      RotationY=90
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
            GroupWorkflow "Track 2 Texture5"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=110.0177
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=110.0177
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> GroupWorkflow Right
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                      TranslationX=4.98
                      TranslationY=2
                      TranslationZ=110.0177
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                #11, #9 -> GroupWorkflow Left
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                      TranslationX=-4.98
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                      RotationY=90
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        Disable SubscribeSubject Startpos => #9
        -> Disable LessThan(Operand=DoubleProperty(Value=2000)) => #10
        #9 -> Disable GreaterThan(Operand=DoubleProperty(Value=999)) => #11
        #10, #11 -> Disable Zip
        -> Disable Condition => #13
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #8, #13 -> Disable SubscribeWhen

        Disable GroupWorkflow "Track 1 Textures" => #15
            GroupWorkflow "Track 1 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.99
                      TranslationZ=70.00313
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-2
                      TranslationZ=70.00313
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                      TranslationX=5
                      TranslationY=2
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                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                      TranslationX=-5
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
                Disable GroupWorkflow "Track 1 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1070
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=50.30449
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                          ScaleX=140
                          ScaleY=8
                          ScaleZ=0
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=50.30449
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                          ScaleX=140
                          ScaleY=8
                          ScaleZ=0
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                          TranslationX=4
                          TranslationY=2
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                          RotationX=0
                          ScaleX=120
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                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-4
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                          ScaleX=140
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
            GroupWorkflow "Track 1 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=30.00313
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=2
                      TranslationZ=30.00313
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationX=0
                      TranslationY=5.98
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                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.98
                      TranslationY=2
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                      RotationX=0
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
            GroupWorkflow "Track 1 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-90
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=50.00313
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=2
                      TranslationZ=50.00313
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationX=0
                      TranslationY=5.98
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                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.98
                      TranslationY=2
                      TranslationZ=50.00313
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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
            GroupWorkflow "Track 1 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-70
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
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                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=70.00313
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
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                      TranslationX=4.98
                      TranslationY=2
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                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationX=0
                      TranslationY=5.98
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                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.98
                      TranslationY=2
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                      RotationX=0
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
            GroupWorkflow "Track 1 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-50
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
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                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=90.00313
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
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                      TranslationX=4.98
                      TranslationY=2
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                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationX=0
                      TranslationY=5.98
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                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.98
                      TranslationY=2
                      TranslationZ=90.00313
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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
            GroupWorkflow "Track 1 Texture5"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-30
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=110.003128
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=110.003128
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> GroupWorkflow Right
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                      TranslationX=4.99
                      TranslationY=2
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                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ) => #11
                #11, #9 -> GroupWorkflow Left
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                      TranslationX=-4.99
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                      ScaleZ=0
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        Disable SubscribeSubject Startpos => #16
        -> Disable LessThan(Operand=DoubleProperty(Value=150)) => #17
        #16 -> Disable GreaterThan(Operand=DoubleProperty(Value=-1)) => #18
        #17, #18 -> Disable Zip
        -> Disable Condition => #20
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #15, #20 -> Disable SubscribeWhen

        Disable GroupWorkflow "Track 1 Left Textures" => #22
            GroupWorkflow "Track 1 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.99
                      TranslationZ=-58
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.99
                      TranslationZ=-58
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                      TranslationX=-4
                      TranslationY=2
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                      RotationX=0
                      ScaleX=140
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=-98
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=-98
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
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                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=-78
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=-78
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-78
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
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                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=-58
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationY=5.98
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                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
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                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
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                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=-38
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
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                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationY=5.98
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                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-38
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
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
            GroupWorkflow "Track 1 Texture5"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=-18
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=-18
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> Disable GroupWorkflow Right
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                #2 -> PropertyMapping(TranslationZ) => #11
                #11, #9 -> GroupWorkflow Left
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                      TranslationX=-3.98
                      TranslationY=2
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                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
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        Disable SubscribeSubject Startpos => #23
        -> Disable LessThan(Operand=DoubleProperty(Value=-1000)) => #24
        #23 -> Disable GreaterThan(Operand=DoubleProperty(Value=-1200)) => #25
        #24, #25 -> Disable Zip
        -> Disable Condition => #27
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #22, #27 -> Disable SubscribeWhen

        GroupWorkflow "Track 1A Unique Textures" => #29
            GroupWorkflow "Track 1 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=8
                      TranslationZ=-2.23498535
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-2
                      TranslationZ=-2.23498535
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                      TranslationX=5
                      TranslationY=3
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                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                      TranslationX=-5
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
                Disable GroupWorkflow "Track 1 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1070
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=50.30449
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                          ScaleX=140
                          ScaleY=8
                          ScaleZ=0
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=50.30449
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                          ScaleX=140
                          ScaleY=8
                          ScaleZ=0
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                          TranslationX=4
                          TranslationY=2
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                          RotationX=0
                          ScaleX=120
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                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-4
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                          ScaleX=140
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
            GroupWorkflow "Track 1 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=2x2_checkerboard, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=-42.2349854
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=2x2_checkerboard, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=-42.2349854
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationX=0
                      TranslationY=7.98
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                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.98
                      TranslationY=3
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                      RotationX=0
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
            GroupWorkflow "Track 1 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-90
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=-22.2349854
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=-22.2349854
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationX=0
                      TranslationY=7.98
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                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=-22.2349854
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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
            GroupWorkflow "Track 1 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-70
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=-2.23498535
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=-2.23498535
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationX=0
                      TranslationY=7.98
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                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.98
                      TranslationY=3
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                      RotationX=0
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
            GroupWorkflow "Track 1 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-50
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_white, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.99
                      TranslationZ=17.7650146
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_white, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.99
                      TranslationY=3
                      TranslationZ=17.7650146
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
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                      TranslationX=0
                      TranslationY=7.98
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                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
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                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=17.7650146
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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
            GroupWorkflow "Track 1 Texture5"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-30
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_6_rows, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=37.7650146
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_6_rows, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=37.7650146
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> GroupWorkflow Right
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                      TranslationX=4.99
                      TranslationY=3
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                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ) => #11
                #11, #9 -> GroupWorkflow Left
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                      TranslationX=-4.99
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                      ScaleZ=0
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        SubscribeSubject Startpos => #30
        -> LessThan(Operand=DoubleProperty(Value=150)) => #31
        #30 -> GreaterThan(Operand=DoubleProperty(Value=-1)) => #32
        #31, #32 -> Zip
        -> Condition => #34
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #29, #34 -> SubscribeWhen

        GroupWorkflow "Track 2A Unique Textures" => #36
            Disable GroupWorkflow "Track2 Spatial Modulation"
                GroupWorkflow "Track 2 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it-1070
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=-70
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                          ScaleX=140
                          ScaleY=10
                          ScaleZ=0
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=-70
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                          ScaleX=140
                          ScaleY=10
                          ScaleZ=0
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=-70
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                          ScaleX=140
                          ScaleY=10
                          ScaleZ=0
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                          TranslationX=-5
                          TranslationY=2
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                          RotationX=0
                          ScaleX=120
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
                    Disable GroupWorkflow "Track 1 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1070
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=50.30449
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                              ScaleX=140
                              ScaleY=8
                              ScaleZ=0
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              MeshName=Plane
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=50.30449
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                              ScaleX=140
                              ScaleY=8
                              ScaleZ=0
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              MeshName=Plane
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
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                              TranslationX=4
                              TranslationY=2
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                              RotationX=0
                              ScaleX=120
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                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                              TranslationX=-4
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                              ScaleX=140
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
                GroupWorkflow "Track 2 Texture1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it-1110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-110
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                          ScaleX=10
                          ScaleY=10
                          ScaleZ=8
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-110
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                          ScaleX=10
                          ScaleY=10
                          ScaleZ=8
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=4.99
                          TranslationY=2
                          TranslationZ=-110
                          RotationZ=0
                          RotationY=-90
                          RotationX=0
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-4.99
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                          RotationY=90
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
                GroupWorkflow "Track 2 Texture2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it-1090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-90
                          RotationZ=0
                          RotationY=90
                          RotationX=90
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                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                          TranslationY=-1.98
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=4.99
                          TranslationY=2
                          TranslationZ=-90
                          RotationZ=0
                          RotationY=-90
                          RotationX=0
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-4.99
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                          RotationY=90
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
                GroupWorkflow "Track 2 Texture3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it-1070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-70
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                          ScaleX=10
                          ScaleY=10
                          ScaleZ=8
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-70
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                          ScaleX=10
                          ScaleY=10
                          ScaleZ=8
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=4.99
                          TranslationY=2
                          TranslationZ=-70
                          RotationZ=0
                          RotationY=-90
                          RotationX=0
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-4.99
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                          RotationY=90
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
                GroupWorkflow "Track 2 Texture4"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it-1050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
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                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-50
                          RotationZ=0
                          RotationY=90
                          RotationX=90
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                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
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                          TranslationY=-1.98
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                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
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                          TranslationX=4.99
                          TranslationY=2
                          TranslationZ=-50
                          RotationZ=0
                          RotationY=-90
                          RotationX=0
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
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                          TranslationX=-4.99
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                          RotationY=90
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
                GroupWorkflow "Track 2 Texture5"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it-1030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-30
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                          ScaleX=10
                          ScaleY=10
                          ScaleZ=8
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-30
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                          ScaleX=10
                          ScaleY=10
                          ScaleZ=8
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                    #8, #9 -> GroupWorkflow Right
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                          TranslationX=4.98
                          TranslationY=2
                          TranslationZ=-30
                          RotationZ=0
                          RotationY=-90
                          RotationX=0
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                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                    #11, #9 -> GroupWorkflow Left
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                          TranslationX=-4.98
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                          RotationY=90
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
            GroupWorkflow "Track 2 Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
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                      TranslationX=0
                      TranslationY=8
                      TranslationZ=71.12683
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
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                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
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                      TranslationY=-2
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                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=3
                      TranslationZ=71.12683
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
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                      TranslationX=-5
                      TranslationY=3
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                      RotationX=0
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
            GroupWorkflow "Track 2 Texture1"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=31.1268311
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=31.1268311
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=4.99
                      TranslationY=3
                      TranslationZ=31.1268311
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.99
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                      RotationY=90
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
            GroupWorkflow "Track 2 Texture2"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=45Grat_12, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=51.12683
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=45Grat_12, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=51.12683
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=4.99
                      TranslationY=3
                      TranslationZ=51.12683
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.99
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                      RotationY=90
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
            GroupWorkflow "Track 2 Texture3"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_white_6_rows, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=71.12683
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_white_6_rows, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=71.12683
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=4.99
                      TranslationY=3
                      TranslationZ=71.12683
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.99
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                      RotationY=90
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
            GroupWorkflow "Track 2 Texture4"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=91.12683
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=91.12683
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
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                      TranslationX=4.99
                      TranslationY=3
                      TranslationZ=91.12683
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
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                      TranslationX=-4.99
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                      RotationY=90
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
            GroupWorkflow "Track 2 Texture5"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Green_circle, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.99
                      TranslationZ=111.126831
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Green_circle, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=111.126831
                      RotationZ=0
                      RotationY=90
                      RotationX=90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> GroupWorkflow Right
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                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=111.126831
                      RotationZ=0
                      RotationY=-90
                      RotationX=0
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                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                #11, #9 -> GroupWorkflow Left
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                      TranslationX=-4.98
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                      RotationY=90
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        SubscribeSubject Startpos => #37
        -> LessThan(Operand=DoubleProperty(Value=2000)) => #38
        #37 -> GreaterThan(Operand=DoubleProperty(Value=999)) => #39
        #38, #39 -> Zip
        -> Condition => #41
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #36, #41 -> SubscribeWhen

    GroupWorkflow "Control and Give Reward"
        GroupWorkflow "Generate Reward Serial String"
            SubscribeSubject RightCorrect
            -> Skip(Count=1) => #1
            -> Condition "If passive"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> FloatProperty(Value=10) => #3
            #1 -> Condition "If active"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=20))
                -> WorkflowOutput
            -> FloatProperty(Value=50) => #5
            #3, #5 -> Amb
            -> Disable Take(Count=1)
            -> BehaviorSubject RightValveOpenTime

            SubscribeSubject LeftCorrect
            -> Skip(Count=1) => #10
            -> Condition "If passive"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> FloatProperty(Value=10) => #12
            #10 -> Condition "If active"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            -> FloatProperty(Value=50) => #14
            #12, #14 -> Amb
            -> Disable Take(Count=1)
            -> BehaviorSubject LeftValveOpenTime

            StringProperty(Value=l) => #18
            SubscribeSubject LeftValveOpenTime
            -> PropertyMapping(Value)
            -> FloatProperty(Value=10)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #22
              Expression: it.ToString()
            #18, #22 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> BehaviorSubject LeftRewardString

            StringProperty(Value=r) => #26
            SubscribeSubject RightValveOpenTime
            -> PropertyMapping(Value)
            -> FloatProperty(Value=10)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #30
              Expression: it.ToString()
            #26, #30 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> BehaviorSubject RightRewardString

        SubscribeSubject LeftCorrect
        -> Disable Take(Count=1) => #2
        SubscribeSubject LeftRewardString
        -> PropertyMapping(Value) => #4
        #2, #4 -> StringProperty(Value=l10) => #5
        Disable SubscribeSubject "Learning Type" => #6
        -> Disable Condition "If active + passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #8
        #6 -> Disable Condition "If not both"
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=1) => #10
        #8, #10 -> Disable Amb
        -> Disable PropertyMapping(Count) => #12
        #5, #12 -> Skip(Count=1)
        -> Take(Count=1)
        -> MulticastSubject SerialToSend

        SubscribeSubject RightCorrect
        -> Disable Take(Count=1) => #17
        SubscribeSubject RightRewardString
        -> PropertyMapping(Value) => #19
        #17, #19 -> StringProperty(Value=r10) => #20
        Disable SubscribeSubject "Learning Type" => #21
        -> Disable Condition "If active + passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #23
        #21 -> Disable Condition "If not both"
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=1) => #25
        #23, #25 -> Disable Amb
        -> Disable PropertyMapping(Count) => #27
        #20, #27 -> Skip(Count=1)
        -> Take(Count=1)
        -> MulticastSubject SerialToSend

        StringProperty
        -> BehaviorSubject SerialToSend

        SubscribeSubject SerialToSend
        -> Skip(Count=1)
        -> Take(Count=1)
        -> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoInput, NewLine=\r) => #36
        SubscribeSubject "Response Value"
        -> PropertyMapping(Value) => #38
        #36, #38 -> IntProperty(Value=2)
        -> Disable TakeUntil
        -> MulticastSubject "Correct Lap"

        SubscribeSubject RightValveOpenTime => #42
        -> Condition "If passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=10))
            -> WorkflowOutput
        -> IntProperty(Value=2) => #44
        #42 -> Condition "If active"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=50))
            -> WorkflowOutput
        -> IntProperty(Value=20) => #46
        SubscribeSubject LeftValveOpenTime => #47
        -> Condition "If passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=10))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #49
        #47 -> Condition "If active"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=50))
            -> WorkflowOutput
        -> IntProperty(Value=10) => #51
        #44, #46, #49, #51 -> Amb
        -> BehaviorSubject "Response Value"

    GroupWorkflow "Get Licks"
        Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=true)
        -> Unit => #1
        Unit => #2
        #1, #2 -> Merge
        -> BehaviorSubject RightLick
        Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=true)
        -> Unit => #6
        #6, #2 -> Merge
        -> BehaviorSubject LeftLick

        GroupWorkflow "Check For Recent Licks"
            ExternalizedMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT0.05S)
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #3
            IntProperty(Value=0) => #4
            SubscribeSubject LeftLick
            -> IntProperty(Value=1) => #6
            SubscribeSubject RightLick
            -> IntProperty(Value=2) => #8
            #4, #6, #8 -> Merge
            -> Skip(Count=3)
            -> BehaviorSubject LickState
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #13
            #3, #13 -> CombineLatest
            -> Subtract
            -> Divide(Operand=DoubleProperty(Value=1000))
            -> BehaviorSubject TimeSinceLastLick

    GroupWorkflow "Performance Tracking"
        GroupWorkflow "Active Learning" => #0
            SubscribeSubject LickState
            -> PropertyMapping(Value) => #1
            Source2=#1 -> IntProperty(Value=1)
            -> Skip(Count=1)
            -> Disable First => #4
            GroupWorkflow "Reward zone info"
                SubscribeSubject InsideZone => #0
                -> Condition => #1
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #3
                #1, #3 -> IntProperty(Value=2) => #4
                #0 -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> IntProperty(Value=0) => #6
                #4, #6 -> Merge
                -> WorkflowOutput
            -> PropertyMapping(Value) => #6
            #4, #6 -> Equal(Operand=IntProperty(Value=0)) => #7
            -> Condition Correct => #8
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> Condition "Correct Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> IntProperty(Value=10)
            -> MulticastSubject LeftCorrect
            #8 -> IntProperty(Value=2)
            -> Condition "Correct Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> IntProperty(Value=20)
            -> MulticastSubject RightCorrect
            #7 -> Condition Incorrect => #17
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> Condition "Incorrect Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> MulticastSubject LeftIncorrect
            #17 -> IntProperty(Value=2)
            -> Condition "Incorrect Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> MulticastSubject RightIncorrect
        SubscribeSubject "Learning Type"
        -> Condition "If Active" => #2
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #0, #2 -> SubscribeWhen

        GroupWorkflow "Passive Learning" => #4
            SubscribeSubject Entry => #0
            -> IntProperty(Value=1)
            -> Condition "Correct Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> Disable First
            -> MulticastSubject LeftCorrect
            #0 -> IntProperty(Value=2)
            -> Condition "Correct Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> Disable First
            -> MulticastSubject RightCorrect
        SubscribeSubject "Learning Type"
        -> Condition "If Passive" => #6
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        #4, #6 -> SubscribeWhen

        GroupWorkflow "Track Reward Zone"
            SubscribeSubject<System.Single> MousePos => #0
            SubscribeSubject "Reward Zone Centre Location" => #1
            -> PropertyMapping(Value)
            -> IntProperty(Value=1100) => #3
            SubscribeSubject "Reward Zone Size"
            -> PropertyMapping(Value) => #5
            #3, #5 -> Subtract(Operand=IntProperty(Value=5))
            -> PropertyMapping(Value) => #7
            #0, #7 -> GreaterThan(Operand=FloatProperty(Value=1095)) => #8
            #1 -> PropertyMapping(Value)
            -> IntProperty(Value=1100) => #10
            SubscribeSubject "Reward Zone Size"
            -> PropertyMapping(Value) => #12
            #10, #12 -> Add(Operand=IntProperty(Value=5)) => #13
            -> PropertyMapping(Value) => #14
            #14, #0 -> LessThan(Operand=FloatProperty(Value=1105)) => #15
            #8, #15 -> Zip
            -> LogicalAnd => #17
            -> BehaviorSubject InsideZone
            -> WorkflowOutput
            #17 -> Disable DistinctUntilChanged
            -> Disable Skip(Count=1) => #21
            -> Disable Condition Entry
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable IntProperty(Value=1)
            -> Disable BehaviorSubject Entry
            #21 -> Disable BitwiseNot
            -> Disable Condition Exit
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> Disable BehaviorSubject Exit
            Disable SubscribeSubject "Reward Zone Centre Location"
            -> Disable PropertyMapping(Value)
            -> Disable IntProperty(Value=-1045) => #31
            #31, #13 -> PropertyMapping(Value) => #32
            #0, #32 -> GreaterThan(Operand=FloatProperty(Value=1105))
            -> DistinctUntilChanged
            -> Skip(Count=1)
            -> Condition Entry
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> BehaviorSubject Entry

    Disable GroupWorkflow "Performance Calculation"
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
    SubscribeSubject "Track ID"
    -> MulticastSubject "Track ID (main)"

    SubscribeSubject LickState
    -> MulticastSubject "LickState (main)"

    SubscribeSubject MousePos
    -> MulticastSubject "MousePos (main)"

    SubscribeSubject MousePos
    -> MulticastSubject "MousePos (main)"

    SubscribeSubject "Correct Lap"
    -> MulticastSubject "Correct Lap (main)"
-> Concat
-> BehaviorSubject "End of lap"
-> Disable Last
-> Disable Repeat
-> Disable ElementIndex
-> Disable MemberSelector(Selector=Index)

Disable Bonsai.Video.ScreenCaptureStream(HideCursor=true, CaptureRegion(X=0, Y=300, Width=1920, Height=480), FrameInterval=100)
-> Disable Bonsai.Shaders.SampleOnRenderFrame
-> Disable Bonsai.Vision.Grayscale
-> Disable Bonsai.Vision.Crop(RegionOfInterest(X=1895, Y=431, Width=17, Height=30))
-> Disable Bonsai.Dsp.Average
-> Disable MemberSelector(Selector=Val0)
-> Disable LessThanOrEqual(Operand=DoubleProperty(Value=128))
-> Disable BehaviorSubject Quadstate

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    BooleanProperty(Value=false)
    -> BehaviorSubject InsideZone

    IntProperty(Value=1)
    -> BehaviorSubject "Lap ID"

    Disable IntProperty(Value=1)
    -> Disable BehaviorSubject "Lick Limit"

    IntProperty(Value=0)
    -> BehaviorSubject "Track ID (main)"

    IntProperty(Value=0)
    -> BehaviorSubject "LickState (main)"

    GroupWorkflow TrialOutcomes
        IntProperty(Value=0) => #0
        -> BehaviorSubject LeftCorrect
        #0 -> BehaviorSubject RightCorrect
        #0 -> BehaviorSubject NoResponse
        #0 -> BehaviorSubject LeftIncorrect
        #0 -> BehaviorSubject RightIncorrect
        #0 -> BehaviorSubject "Correct Lap"

        IntProperty(Value=0)
        -> Skip(Count=1)
        -> BehaviorSubject TrialResults

    FloatProperty(Value=200)
    -> BehaviorSubject "MousePos (main)"

    IntProperty(Value=0) => #27
    -> BehaviorSubject "Lap count Track 1"
    #27 -> BehaviorSubject "Lap count Track 2"

    FloatProperty(Value=0) => #30
    -> BehaviorSubject "Track 1 Performance"
    #30 -> BehaviorSubject "Track 2 Performance"

    IntProperty(Value=0)
    -> BehaviorSubject "Correct Lap (main)"

    FloatProperty(Value=0)
    -> BehaviorSubject "Total reward volume"

Disable GroupWorkflow "Performance Calculation"
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
SubscribeSubject "Correct Lap" => #39
-> Condition "If Track 1 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate => #42
SubscribeSubject "Track ID (main)" => #43
-> Condition "If Track 1"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate
-> MulticastSubject "Lap count Track 1" => #47
#42, #47 -> CombineLatest
-> Divide
-> MulticastSubject "Track 1 Performance"
#39 -> Condition "If Track 2 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=20))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate => #53
#43 -> Condition "If Track 2"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=2))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate
-> MulticastSubject "Lap count Track 2" => #57
#53, #57 -> CombineLatest
-> Divide
-> MulticastSubject "Track 2 Performance"

ExternalizedMapping(FileName(DisplayName="Lick Performance FileName"))
-> IncludeWorkflow "Lick Performance"
  Path=BonVision:Logging.EventLogger.bonsai
  FileName=test_data\Masa2tracks_Lick_Performance2023-02-02T14_28_40.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp

ExternalizedMapping(FileName(DisplayName="Reward FileName"))
-> IncludeWorkflow Reward(Path=BonVision:Logging.EventLogger.bonsai, FileName=test_data\Masa2tracks_Reward.csv, Append=false, Overwrite=false, Suffix=Timestamp)

SubscribeSubject "LickState (main)" => #65
-> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #67
SubscribeSubject "Track ID (main)" => #68
#65, #68 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #70
SubscribeSubject "Lap count Track 1" => #71
#65, #71 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #73
SubscribeSubject "Lap count Track 2" => #74
#65, #74 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #76
SubscribeSubject "MousePos (main)" => #77
#65, #77 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #79
#65, #67, #70, #73, #76, #79 -> Zip
-> IncludeWorkflow "Lick Performance"(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

SubscribeSubject "Correct Lap" => #82
-> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #84
SubscribeSubject "Lap count Track 1" => #85
#82, #85 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #87
SubscribeSubject "Lap count Track 2" => #88
#82, #88 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #90
SubscribeSubject "Track 1 Performance" => #91
#82, #91 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #93
SubscribeSubject "Track 2 Performance" => #94
#82, #94 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #96
SubscribeSubject "MousePos (main)" => #97
#82, #97 -> WithLatestFrom
-> MemberSelector(Selector=Item2) => #99
#82, #84, #87, #90, #93, #96, #99 -> Zip
-> IncludeWorkflow Reward(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

SubscribeSubject "Correct Lap" => #102
-> Condition "If Track 1 passive"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> FloatProperty(Value=10) => #104
#102 -> Condition "If Track 1 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> FloatProperty(Value=50) => #106
#102 -> Condition "If Track 2 passive"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=2))
    -> WorkflowOutput
-> FloatProperty(Value=10) => #108
#102 -> Condition "If Track 2 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> FloatProperty(Value=50) => #110
#104, #106, #108, #110 -> Merge
-> Accumulate
-> MulticastSubject "Total reward volume"

GroupWorkflow Quad(Description=Quad) => #114
    GroupWorkflow "Black quad" => #0
        SubscribeSubject DrawQuad
        -> FloatProperty(Value=0)
        -> WorkflowOutput
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=20000000, Upper=40000000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT3.1209647S)
    -> Unit => #6
    #0, #6 -> TakeUntil => #7
    GroupWorkflow "White quad" => #8
        SubscribeSubject DrawQuad
        -> FloatProperty(Value=1)
        -> WorkflowOutput
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=20000000, Upper=40000000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT2.0888535S)
    -> Unit => #14
    #8, #14 -> TakeUntil => #15
    #7, #15 -> Concat
    -> Repeat
    -> MulticastSubject QuadState => #18
    -> WorkflowOutput
    #18 -> PropertyMapping(Ambient) => #20
    SubscribeSubject Draw3DStim => #21
    #20, #21 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=0.1
      TranslationY=-0.06
      TranslationZ=0.13
      RotationZ=0
      RotationY=0
      RotationX=0
      ScaleX=0.1
      ScaleY=0.15
      ScaleZ=1
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=0
      MeshName=cube3d
Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=false) => #115
#114, #115 -> SubscribeWhen

Bonsai.Shaders.UpdateFrame
-> PublishSubject DrawQuad
