WorkflowBuilder(Version=2.9.1)
SubscribeSubject "Learning Type" => #0
-> Condition "If Linear"
    WorkflowInput Source1
    -> Equal(Operand=DoubleProperty(Value=1))
    -> WorkflowOutput
-> SelectMany Linear => #2
    WorkflowInput Source1

    SubscribeSubject RenderFrameTimeElapsed
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Math.Min(1.0, Math.Max(0.0, Convert.ToDouble(it) / 10.0)) * 141
    -> Bonsai.Dsp.Difference(Order=1)
    -> Condition IgnoreOverflowTicks => #5
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=1000))
        -> WorkflowOutput
    ExternalizedMapping(Value(DisplayName=Gain)) => #6
    #5, #6 -> Multiply(Operand=DoubleProperty(Value=1))
    -> Accumulate
    -> Condition => #9
        WorkflowInput Source1
        -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    SubscribeSubject Startpos
    -> PropertyMapping(Value) => #11
    #9, #11 -> Add(Operand=DoubleProperty(Value=1000))
    -> WorkflowOutput
#0 -> Condition "If Sigmoidal"
    WorkflowInput Source1
    -> Equal(Operand=DoubleProperty(Value=2))
    -> WorkflowOutput
-> SelectMany Sigmoidal => #4
    WorkflowInput Source1

    SubscribeSubject RenderFrameTimeElapsed
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Math.Pow((1.0 - Math.Cos(Math.Min(1.0, Math.Max(0.0, Convert.ToDouble(it) / 10.0)) * Math.PI)) * 0.5, 1.8) * 140.1
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Math.Min(1.0, Math.Max(0.0, Convert.ToDouble(it) / 10.0)) * 141.0
    -> Bonsai.Dsp.Difference(Order=1)
    -> Condition IgnoreOverflowTicks => #6
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=1000))
        -> WorkflowOutput
    ExternalizedMapping(Value(DisplayName=Gain)) => #7
    #6, #7 -> Multiply(Operand=DoubleProperty(Value=1))
    -> Accumulate
    -> Condition => #10
        WorkflowInput Source1
        -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    SubscribeSubject Startpos
    -> PropertyMapping(Value) => #12
    #10, #12 -> Add(Operand=DoubleProperty(Value=0))
    -> Disable BehaviorSubject MousePos
    -> WorkflowOutput
#0 -> Condition "If Reverse Sigmoidal"
    WorkflowInput Source1
    -> Equal(Operand=DoubleProperty(Value=3))
    -> WorkflowOutput
-> SelectMany "Reverse S" => #6
    WorkflowInput Source1

    SubscribeSubject RenderFrameTimeElapsed
    -> Accumulate
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: (3.68 * Math.Pow((Math.Max(0.0, Convert.ToDouble(it)) / 10.0) - 0.5, 3.0) + 0.5 + 0.08 * ((Math.Max(0.0, Convert.ToDouble(it)) / 10.0) - 0.5)) * 140.3
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: (Math.Min(1.0, Math.Max(0.0, Convert.ToDouble(it) / 10.0)) - (0.25 / (2.0 * Math.PI)) * Math.Sin(2.0 * Math.PI * Math.Min(1.0, Math.Max(0.0, Convert.ToDouble(it) / 10.0))) - (0.75 / (4.0 * Math.PI)) * Math.Sin(4.0 * Math.PI * Math.Min(1.0, Math.Max(0.0, Convert.ToDouble(it) / 10.0)))) * 140.1
    -> Bonsai.Dsp.Difference(Order=1)
    -> Condition IgnoreOverflowTicks => #6
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=1000))
        -> WorkflowOutput
    ExternalizedMapping(Value(DisplayName=Gain)) => #7
    #6, #7 -> Multiply(Operand=DoubleProperty(Value=1))
    -> Accumulate
    -> Condition => #10
        WorkflowInput Source1
        -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    SubscribeSubject Startpos
    -> PropertyMapping(Value) => #12
    #10, #12 -> Add(Operand=DoubleProperty(Value=1000))
    -> Disable BehaviorSubject MousePos
    -> WorkflowOutput
#0 -> Condition "If slow downs near landmark"
    WorkflowInput Source1
    -> Equal(Operand=DoubleProperty(Value=4))
    -> WorkflowOutput
-> SelectMany "Slow down near landmark" => #8
    WorkflowInput Source1

    SubscribeSubject RenderFrameTimeElapsed
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        Convert.ToDouble(it) >= 10.0 ? 140.5 :
        (
          Math.Max(0.0, Convert.ToDouble(it)) < (10.0 / 3.0)
            ? 21.0 * Math.Max(0.0, Convert.ToDouble(it))
            : 70.0 + 10.5 * (Math.Max(0.0, Convert.ToDouble(it)) - (10.0 / 3.0))
        )
    -> Bonsai.Dsp.Difference(Order=1)
    -> Condition IgnoreOverflowTicks => #5
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=1000))
        -> WorkflowOutput
    ExternalizedMapping(Value(DisplayName=Gain)) => #6
    #5, #6 -> Multiply(Operand=DoubleProperty(Value=1))
    -> Accumulate
    -> Condition => #9
        WorkflowInput Source1
        -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    SubscribeSubject Startpos
    -> PropertyMapping(Value) => #11
    #9, #11 -> Add(Operand=DoubleProperty(Value=0))
    -> Disable BehaviorSubject MousePos
    -> WorkflowOutput
#2, #4, #6, #8 -> Merge
-> BehaviorSubject MousePos

ExternalizedMapping(DisplayDevice, WindowState)
-> Bonsai.Shaders.CreateWindow
  Width=1800
  Height=800
  VSync=Off
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=vertGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\vertGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=horGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\horGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=Triangles
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\Triangles.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=dots
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\8914_generated.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern 4"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square pattern 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="triangle pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\triangle pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="triangle pattern 3"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\triangle pattern 3.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern 3"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern 3.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="triangle pattern 4"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\triangle pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="star pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\star pattern 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="star pattern 4"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\star pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=45Grat_12
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\45Grat_12.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=135Grat_12
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\135Grat_12.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black cross"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black cross.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black plus"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black plus.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white cross"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white cross.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white plus"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white plus.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black bar"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black bar.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white bar"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white bar.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square black"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square black.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square white"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square white.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black R"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black R.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white R"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white R.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white L"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white L.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black L"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black L.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid_45_6
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid_45_6.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern black 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern black 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern white 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern white 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=2x2_checkerboard
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\2x2_checkerboard.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=45Grat_1_50contrast
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\45Grat_1_50contrast.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=135Grat_1_50contrast
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\135Grat_1_50contrast.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=Green_circle
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\Green_circle.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=5x5_dots
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\5x5_dots.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=brick_6_rows
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\brick_6_rows.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=brick_white_6_rows
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\brick_white_6_rows.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=HorGrat_1_50contrast
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\HorGrat_1_50contrast.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=Circle_horBar_white
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\Circle_horBar_white.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=Circle_horBar
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\Circle_horBar.jpg
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=Textures\cube3d.obj)))
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapSphere
      RenderState=""
      ShaderUniforms=""
      BufferBindings
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\MeshMapSphere.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapGradient
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\gradient.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapVector
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\vector.frag
-> Bonsai.Resources.LoadResources

GroupWorkflow "Track 1A Unique Textures"
    GroupWorkflow "Track 1 MainRoom"
        SubscribeSubject MousePos => #0
        ExternalizedMapping(Expression) => #1
        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it-70
        -> PropertyMapping(TranslationZ)
        -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.99
              TranslationZ=69.95
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=140
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ)
        -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-2
              TranslationZ=69.95
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=140
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ)
        -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=5
              TranslationY=2
              TranslationZ=69.95
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=140
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ(Selector=it))
        -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-5
              TranslationY=2
              TranslationZ=69.95
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=140
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

        Disable GroupWorkflow "Track 1 MainRoom"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: it+1070
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=50.30449
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                  ScaleX=140
                  ScaleY=8
                  ScaleZ=0
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=50.30449
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                  ScaleX=140
                  ScaleY=8
                  ScaleZ=0
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4
                  TranslationY=2
                  TranslationZ=50.30449
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-4
                  TranslationY=2
                  TranslationZ=50.30449
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                  ScaleX=140
                  ScaleY=8
                  ScaleZ=0
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput

    GroupWorkflow "Track 1 Texture1"
        ExternalizedMapping(Expression) => #0
        SubscribeSubject MousePos => #1
        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it-110
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName) => #4
        #3, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=2x2_checkerboard, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=29.9499989
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=2x2_checkerboard, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=4.98
              TranslationY=2
              TranslationZ=29.9499989
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        #8, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=2x2_checkerboard, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=29.9499989
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=10
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #10
        #10, #4 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=2x2_checkerboard, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-4.98
              TranslationY=2
              TranslationZ=29.9499989
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

    GroupWorkflow "Track 1 Texture2"
        ExternalizedMapping(Expression) => #0
        SubscribeSubject MousePos => #1
        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it-90
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName) => #4
        #3, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=49.95
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=4.98
              TranslationY=2
              TranslationZ=49.95
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        #8, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=49.95
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=10
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #10
        #10, #4 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-4.98
              TranslationY=2
              TranslationZ=49.95
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

    GroupWorkflow "Track 1 Texture3"
        ExternalizedMapping(Expression) => #0
        SubscribeSubject MousePos => #1
        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it-70
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName) => #4
        #3, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=69.95
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=4.98
              TranslationY=2
              TranslationZ=69.95
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        #8, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=69.95
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=10
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #10
        #10, #4 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-4.98
              TranslationY=2
              TranslationZ=69.95
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

    GroupWorkflow "Track 1 Texture4"
        ExternalizedMapping(Expression) => #0
        SubscribeSubject MousePos => #1
        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it-50
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName) => #4
        #3, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_white, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=89.95
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_white, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=4.98
              TranslationY=2
              TranslationZ=89.95
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        #8, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_white, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=89.95
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=10
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #10
        #10, #4 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_white, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-4.98
              TranslationY=2
              TranslationZ=89.95
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

    GroupWorkflow "Track 1 Texture5"
        ExternalizedMapping(Expression) => #0
        SubscribeSubject MousePos => #1
        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it-30
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
        #3, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_6_rows, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=109.95
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=10
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_6_rows, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=109.95
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        ExternalizedMapping(TextureName(DisplayName=Side)) => #9
        #8, #9 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_6_rows, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=4.99
              TranslationY=2
              TranslationZ=109.95
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #11
        #11, #9 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_6_rows, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-4.99
              TranslationY=2
              TranslationZ=109.95
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

GroupWorkflow "Track 2A Unique Textures"
    Disable GroupWorkflow "Track2 Spatial Modulation"
        GroupWorkflow "Track 2 Main Room"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: it-1070
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=-70
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                  ScaleX=140
                  ScaleY=10
                  ScaleZ=0
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=-70
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                  ScaleX=140
                  ScaleY=10
                  ScaleZ=0
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=5
                  TranslationY=2
                  TranslationZ=-70
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                  ScaleX=140
                  ScaleY=10
                  ScaleZ=0
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-5
                  TranslationY=2
                  TranslationZ=-70
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                  ScaleX=120
                  ScaleY=10
                  ScaleZ=0
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput

            Disable GroupWorkflow "Track 1 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.99
                      TranslationZ=50.30449
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.99
                      TranslationZ=50.30449
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=50.30449
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4
                      TranslationY=2
                      TranslationZ=50.30449
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

        GroupWorkflow "Track 2 Texture1"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: it-1110
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-110
                  RotationZ=0
                  RotationY=90
                  RotationX=90
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-110
                  RotationZ=0
                  RotationY=90
                  RotationX=90
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.99
                  TranslationY=2
                  TranslationZ=-110
                  RotationZ=0
                  RotationY=-90
                  RotationX=0
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-4.99
                  TranslationY=2
                  TranslationZ=-110
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture2"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: it-1090
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-90
                  RotationZ=0
                  RotationY=90
                  RotationX=90
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-90
                  RotationZ=0
                  RotationY=90
                  RotationX=90
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.99
                  TranslationY=2
                  TranslationZ=-90
                  RotationZ=0
                  RotationY=-90
                  RotationX=0
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-4.99
                  TranslationY=2
                  TranslationZ=-90
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture3"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: it-1070
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-70
                  RotationZ=0
                  RotationY=90
                  RotationX=90
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-70
                  RotationZ=0
                  RotationY=90
                  RotationX=90
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.99
                  TranslationY=2
                  TranslationZ=-70
                  RotationZ=0
                  RotationY=-90
                  RotationX=0
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-4.99
                  TranslationY=2
                  TranslationZ=-70
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture4"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: it-1050
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName) => #4
            #3, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-50
                  RotationZ=0
                  RotationY=90
                  RotationX=90
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-50
                  RotationZ=0
                  RotationY=90
                  RotationX=90
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            #8, #4 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.99
                  TranslationY=2
                  TranslationZ=-50
                  RotationZ=0
                  RotationY=-90
                  RotationX=0
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
            #10, #4 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-4.99
                  TranslationY=2
                  TranslationZ=-50
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput

        GroupWorkflow "Track 2 Texture5"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: it-1030
            -> PropertyMapping(TranslationZ) => #3
            ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
            #3, #4 -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.98
                  TranslationZ=-30
                  RotationZ=0
                  RotationY=90
                  RotationX=90
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #6
            #6, #4 -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.98
                  TranslationZ=-30
                  RotationZ=0
                  RotationY=90
                  RotationX=90
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ) => #8
            ExternalizedMapping(TextureName(DisplayName=Side)) => #9
            #8, #9 -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4.98
                  TranslationY=2
                  TranslationZ=-30
                  RotationZ=0
                  RotationY=-90
                  RotationX=0
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
            #11, #9 -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1", TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-4.98
                  TranslationY=2
                  TranslationZ=-30
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                  ScaleX=10
                  ScaleY=10
                  ScaleZ=8
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput

    GroupWorkflow "Track 2 Main Room"
        SubscribeSubject MousePos => #0
        ExternalizedMapping(Expression) => #1
        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it-1070
        -> PropertyMapping(TranslationZ)
        -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.99
              TranslationZ=-930.05
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=140
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ)
        -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.99
              TranslationZ=-930.05
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=140
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ)
        -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=5
              TranslationY=2
              TranslationZ=-930.05
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=140
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ(Selector=it))
        -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-5
              TranslationY=2
              TranslationZ=-930.05
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=120
              ScaleY=10
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

        Disable GroupWorkflow "Track 1 MainRoom"
            SubscribeSubject MousePos => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: it+1070
            -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Ceil
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=5.99
                  TranslationZ=50.30449
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                  ScaleX=140
                  ScaleY=8
                  ScaleZ=0
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Floor
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=0
                  TranslationY=-1.99
                  TranslationZ=50.30449
                  RotationZ=0
                  RotationY=90
                  RotationX=-90
                  ScaleX=140
                  ScaleY=8
                  ScaleZ=0
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ)
            -> GroupWorkflow Right
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=4
                  TranslationY=2
                  TranslationZ=50.30449
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                  ScaleX=120
                  ScaleY=8
                  ScaleZ=0
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput
            #2 -> PropertyMapping(TranslationZ(Selector=it))
            -> GroupWorkflow Left
                SubscribeSubject Draw3DStim => #0
                ExternalizedMapping(TextureName) => #1
                #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                #2, #3 -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                  TranslationX=-4
                  TranslationY=2
                  TranslationZ=50.30449
                  RotationZ=0
                  RotationY=90
                  RotationX=0
                  ScaleX=140
                  ScaleY=8
                  ScaleZ=0
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=1, Y=1, Z=1)
                  SpecularExponent=10
                  MeshName=Plane
                -> WorkflowOutput

    GroupWorkflow "Track 2 Texture1"
        SubscribeSubject MousePos => #0
        ExternalizedMapping(Expression) => #1
        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it-1110
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName) => #4
        #3, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=5x5_dots, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=-970.05
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=5x5_dots, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=-970.05
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        #8, #4 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=5x5_dots, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=4.99
              TranslationY=2
              TranslationZ=-970.05
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #10, #4 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=5x5_dots, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-4.99
              TranslationY=2
              TranslationZ=-970.05
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

    GroupWorkflow "Track 2 Texture2"
        SubscribeSubject MousePos => #0
        ExternalizedMapping(Expression) => #1
        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it-1090
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName) => #4
        #3, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=45Grat_12, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=-950.05
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=45Grat_12, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=-950.05
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        #8, #4 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=45Grat_12, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=4.99
              TranslationY=2
              TranslationZ=-950.05
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #10, #4 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=45Grat_12, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-4.99
              TranslationY=2
              TranslationZ=-950.05
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

    GroupWorkflow "Track 2 Texture3"
        SubscribeSubject MousePos => #0
        ExternalizedMapping(Expression) => #1
        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it-1070
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName) => #4
        #3, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_white_6_rows, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=-930.05
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_white_6_rows, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=-930.05
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        #8, #4 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_white_6_rows, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=4.99
              TranslationY=2
              TranslationZ=-930.05
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #10, #4 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_white_6_rows, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-4.99
              TranslationY=2
              TranslationZ=-930.05
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

    GroupWorkflow "Track 2 Texture4"
        SubscribeSubject MousePos => #0
        ExternalizedMapping(Expression) => #1
        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it-1050
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName) => #4
        #3, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=-910.05
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=-910.05
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        #8, #4 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=4.99
              TranslationY=2
              TranslationZ=-910.05
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
        #10, #4 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-4.99
              TranslationY=2
              TranslationZ=-910.05
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput

    GroupWorkflow "Track 2 Texture5"
        SubscribeSubject MousePos => #0
        ExternalizedMapping(Expression) => #1
        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it-1030
        -> PropertyMapping(TranslationZ) => #3
        ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
        #3, #4 -> GroupWorkflow Ceil
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Green_circle, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=5.98
              TranslationZ=-890.05
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #6
        #6, #4 -> GroupWorkflow Floor
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Green_circle, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-1.98
              TranslationZ=-890.05
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ) => #8
        ExternalizedMapping(TextureName(DisplayName=Side)) => #9
        #8, #9 -> GroupWorkflow Right
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Green_circle, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=4.98
              TranslationY=2
              TranslationZ=-890.05
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
        #11, #9 -> GroupWorkflow Left
            SubscribeSubject Draw3DStim => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Green_circle, TextureTarget=Texture2D) => #2
            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
            #2, #3 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-4.98
              TranslationY=2
              TranslationZ=-890.05
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
