WorkflowBuilder(Version=2.9.0)
Bonsai.Shaders.UpdateFrame => #0
-> PublishSubject DrawStimuli
#0 -> PublishSubject DrawQuadSubject

GroupWorkflow DisplayAndResources
    ExternalizedMapping(DisplayDevice)
    -> Bonsai.Shaders.CreateWindow
      Width=1800
      Height=800
      VSync=Adaptive
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=cube3d.obj)))
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapSphere
          RenderState=""
          ShaderUniforms=""
          BufferBindings
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\MeshMapSphere.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapGradient
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\gradient.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapVector
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\vector.frag
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

    Bonsai.Shaders.RenderFrame => #8
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> BehaviorSubject RenderFrameCount
    #8 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    #8 -> Disable IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=10000, Light(X=0, Y=0, Z=0))
    -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=-100), NearClip=0.1, FarClip=10000, Light(X=0, Y=0, Z=0))
    -> BehaviorSubject Draw3DStim
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=#404040, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #16
    -> IncludeWorkflow
      Path=BonVision:Environment.ViewWindow.bonsai
      Width=15
      Height=19.5
      Rotation(X=0, Y=60.000001669652114, Z=0)
      Translation(X=-11.25, Y=0.25, Z=-10.505)
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=DimGray, GammaLut=gammalut.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.33333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
    #16 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0.25, Z=-17))
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=DimGray, GammaLut=gammalut.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1)))
    #16 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-60.0000016696521, Z=0), Translation(X=11.25, Y=0.25, Z=-10.505))
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=DimGray, GammaLut=gammalut.bmp) => #26
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.667, Y=0, Width=0.33333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.665, Y=0, Width=0.333, Height=1)))
    #26 -> PublishSubject PostDrawingRight

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    BooleanProperty(Value=false)
    -> BehaviorSubject TimerExpired

    StringProperty(Value=C:\Users\saleem_lab\Documents\VisualStimuli_Temp\)
    -> BehaviorSubject "Saving Dir"

    FloatProperty(Value=1)
    -> BehaviorSubject RepCounter

    ExternalizedMapping(Value(DisplayName=binFileName, Category=Filename))
    -> StringProperty(Value=SparseNoise_Log_.bin)
    -> BehaviorSubject "Bin FileName"

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    IntProperty(Value=0)
    -> BehaviorSubject VideoFrameCount

    FloatProperty(Value=0.1)
    -> BehaviorSubject DurationSingleImage

    ExternalizedMapping(Value)
    -> FloatProperty(Value=-120)
    -> BehaviorSubject StimulusXLoc

    Unit
    -> BehaviorSubject TrialEnds

    FloatProperty(Value=10)
    -> BehaviorSubject WheelGain

GroupWorkflow Borders(Description="Set values for borders of display")
    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=90)
    -> ReplaySubject Top(BufferSize=nil) => #2
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-90)
    -> ReplaySubject Bottom(BufferSize=nil) => #5
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-360)
    -> ReplaySubject Left(BufferSize=nil) => #8
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=360)
    -> ReplaySubject Right(BufferSize=nil) => #11
    #2, #5, #8, #11 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)
    -> WorkflowOutput

WorkflowInput Source1 => #6
SubscribeSubject WheelGain
-> PropertyMapping(WheelGain) => #8
#6, #8 -> GroupWorkflow Stimulus => #9
    WorkflowInput Source1
    -> GroupWorkflow vel64 => #1
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=300
              Size=4
              Colour1=0
              Colour2=1
              numDots1=360
              numDots2=360
              dotLifeBool=1
              dotLifetime=600
              Contrast=1
              VelocityXLeft=0
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=0
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-50
              transXRight=50
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast) => #28
            ExternalizedMapping(Value(DisplayName=Contrast)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #24, #27, #30 -> Zip => #31
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #32
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #33
            #32, #33 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #34
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #35
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #38
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #41
            ExternalizedMapping(Value(DisplayName=VelXright)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #44
            ExternalizedMapping(Value(DisplayName=VelYright)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #47
            ExternalizedMapping(Value(DisplayName=CohRight)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #34, #37, #40, #43, #46, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #21, #31, #50, #57 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject Random => #2
    #1, #2 -> Bonsai.Numerics.Permutation => #3
    ExternalizedMapping(WheelGain) => #4
    #3, #4 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow SpeedAndOtherInfo(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        ExternalizedMapping(WheelGain) => #3
        #0, #3 -> SelectMany DrawStimulus
            SubscribeSubject Draw3DStim => #0
            Timer(DueTime=PT0.06S) => #1
            #0, #1 -> SubscribeWhen => #2
            -> Sink BindLeft => #3
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            SubscribeSubject Borders => #4
            -> MemberSelector(Selector=Item4) => #5
            #4 -> MemberSelector(Selector=Item3) => #6
            #5, #6 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleX) => #9
            SubscribeSubject Parameters => #10
            -> MemberSelector(Selector=transXL)
            -> PropertyMapping(TranslationX) => #12
            #4 -> MemberSelector(Selector=Item1) => #13
            #4 -> MemberSelector(Selector=Item2) => #14
            #13, #14 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleY) => #17
            #3, #9, #12, #17 -> IncludeWorkflow => #18
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-50
              TranslationY=0
              TranslationZ=20
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=720
              ScaleY=180
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            #2 -> Sink BindRight => #19
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            #10 -> MemberSelector(Selector=transXR)
            -> PropertyMapping(TranslationX) => #21
            #19, #9, #21, #17 -> IncludeWorkflow => #22
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=50
              TranslationY=0
              TranslationZ=20
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=720
              ScaleY=180
              ScaleZ=1
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            #18, #22 -> Zip => #23
            Disable WorkflowInput Source1
            -> Disable MemberSelector(Selector=Duration)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> Disable PropertyMapping(DueTime)
            -> Disable Bonsai.Shaders.Timer(DueTime=PT5M) => #28
            #23, #28 -> Disable TakeUntil
            -> Last => #30
            ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #35
            #30, #35 -> Bonsai.Shaders.Delay(DueTime=PT1S)
            -> Unit
            -> WorkflowOutput
            #30 -> FloatProperty(Value=0) => #39
            SubscribeSubject Draw3DStim
            -> Take(Count=1)
            -> FloatProperty(Value=1) => #42
            #39, #42 -> Merge
            -> Disable MulticastSubject QuadState

            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #46
            SubscribeSubject DrawStimuli => #47
            #46, #47 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-360, Right=360, Bottom=-90, Top=90) => #48
            SubscribeSubject Parameters
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #50
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #53
            SubscribeSubject MovMeanWheelSpeed => #54
            #53, #54 -> CombineLatest
            -> Multiply => #56
            ExternalizedMapping(Value(DisplayName=WheelGain)) => #57
            #56, #57 -> Multiply(Operand=DoubleProperty(Value=10)) => #58
            -> PropertyMapping(VelX) => #59
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohLeft)
            -> PropertyMapping(Coherence) => #62
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelYLeft) => #64
            #64, #53 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #67
            #58 -> PropertyMapping(VelX) => #68
            #48, #50, #59, #62, #67, #68 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                ExternalizedMapping(VelX, VelY) => #6
                ExternalizedMapping(DueTime) => #7
                #0, #1, #5, #6, #7 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #8
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #1
                    ExternalizedMapping(numDots) => #2
                    ExternalizedMapping(rndseed) => #3
                    #1, #2, #3 -> GenerateDotField(numDots=180, left=-360, right=360, top=90, bottom=-90, rndseed=0) => #4
                    ExternalizedMapping(dotLifetime) => #5
                    #5, #2 -> GenerateDotLives(dotLifetime=600, numDots=180) => #6
                    #4, #6 -> Zip => #7
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #9
                    ExternalizedMapping(LocationX) => #10
                    ExternalizedMapping(LocationY) => #11
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4)
                    -> PropertyMapping(ExtentX, ExtentY) => #14
                    #9, #10, #11, #14 -> GroupWorkflow Transform => #15
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(X(DisplayName=LocationX)) => #1
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                        #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #3
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                        #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=4, Y=4, Z=1) => #6
                        ExternalizedMapping(Angle) => #7
                        #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    FloatProperty(Value=0) => #16
                    -> PropertyMapping(X) => #17
                    #16 -> PropertyMapping(Y) => #18
                    ExternalizedMapping(Z) => #19
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #22
                    #15, #17, #18, #19, #22 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #24
                    #7, #24 -> CombineLatest => #25
                    #25, #24 -> Sample
                    -> MemberSelector(Selector=Item1) => #27
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.53201914)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #31
                    ExternalizedMapping(DueTime) => #32
                    #31, #32 -> Delay(DueTime=PT0S) => #33
                    FloatProperty(Value=0) => #34
                    #33, #34 -> Merge
                    -> PropertyMapping(VelocityX) => #36
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #40
                    #40, #32 -> Delay(DueTime=PT0S) => #41
                    #41, #34 -> Merge
                    -> PropertyMapping(VelocityY) => #43
                    ExternalizedMapping(Coherence) => #44
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #46
                    ExternalizedMapping(dotLifetimeBool) => #47
                    #27, #36, #43, #44, #46, #5, #47 -> moveDots_2dLife(VelocityX=-3.53201914, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-360, right=360, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #49
                    #49, #46 -> wrapAroundDots(Left=-360, Right=360, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots2)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #12
                #0, #1, #12, #6, #7 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #1
                    ExternalizedMapping(numDots) => #2
                    #1, #2 -> GenerateDotField(numDots=180, left=-360, right=360, top=90, bottom=-90, rndseed=1) => #3
                    ExternalizedMapping(dotLifetime) => #4
                    #4, #2 -> GenerateDotLives(dotLifetime=600, numDots=180) => #5
                    #3, #5 -> Zip => #6
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #8
                    ExternalizedMapping(LocationX) => #9
                    ExternalizedMapping(LocationY) => #10
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4)
                    -> PropertyMapping(ExtentX, ExtentY) => #13
                    #8, #9, #10, #13 -> GroupWorkflow Transform => #14
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(X(DisplayName=LocationX)) => #1
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                        #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #3
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                        #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=4, Y=4, Z=1) => #6
                        ExternalizedMapping(Angle) => #7
                        #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    FloatProperty(Value=1) => #15
                    -> PropertyMapping(X) => #16
                    #15 -> PropertyMapping(Y) => #17
                    #15 -> PropertyMapping(Z) => #18
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #21
                    #14, #16, #17, #18, #21 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #23
                    #6, #23 -> CombineLatest => #24
                    #24, #23 -> Sample
                    -> MemberSelector(Selector=Item1) => #26
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.53201914)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #30
                    ExternalizedMapping(DueTime) => #31
                    #30, #31 -> Delay(DueTime=PT0S) => #32
                    FloatProperty(Value=0) => #33
                    #32, #33 -> Merge
                    -> PropertyMapping(VelocityX) => #35
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #39
                    #39, #31 -> Delay(DueTime=PT0S) => #40
                    #40, #33 -> Merge
                    -> PropertyMapping(VelocityY) => #42
                    ExternalizedMapping(Coherence) => #43
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #45
                    ExternalizedMapping(dotLifetimeBool) => #46
                    #26, #35, #42, #43, #45, #4, #46 -> moveDots_2dLife(VelocityX=-3.53201914, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-360, right=360, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #45 -> wrapAroundDots(Left=-360, Right=360, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #12, #6, #7 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #1
                    ExternalizedMapping(numDots) => #2
                    #1, #2 -> GenerateDotField(numDots=180, left=-360, right=360, top=90, bottom=-90, rndseed=2) => #3
                    ExternalizedMapping(dotLifetime) => #4
                    #4, #2 -> GenerateDotLives(dotLifetime=600, numDots=180) => #5
                    #3, #5 -> Zip => #6
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #8
                    ExternalizedMapping(LocationX) => #9
                    ExternalizedMapping(LocationY) => #10
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4)
                    -> PropertyMapping(ExtentX, ExtentY) => #13
                    #8, #9, #10, #13 -> GroupWorkflow Transform => #14
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(X(DisplayName=LocationX)) => #1
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                        #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #3
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                        #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=4, Y=4, Z=1) => #6
                        ExternalizedMapping(Angle) => #7
                        #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    FloatProperty(Value=1) => #15
                    -> PropertyMapping(X) => #16
                    #15 -> PropertyMapping(Y) => #17
                    #15 -> PropertyMapping(Z) => #18
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #21
                    #14, #16, #17, #18, #21 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #23
                    #6, #23 -> CombineLatest => #24
                    #24, #23 -> Sample
                    -> MemberSelector(Selector=Item1) => #26
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.53201914)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #30
                    ExternalizedMapping(DueTime) => #31
                    #30, #31 -> Delay(DueTime=PT0S) => #32
                    FloatProperty(Value=0) => #33
                    #32, #33 -> Merge
                    -> PropertyMapping(VelocityX) => #35
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #39
                    #39, #31 -> Delay(DueTime=PT0S) => #40
                    #40, #33 -> Merge
                    -> PropertyMapping(VelocityY) => #42
                    ExternalizedMapping(Coherence) => #43
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #45
                    ExternalizedMapping(dotLifetimeBool) => #46
                    #26, #35, #42, #43, #45, #4, #46 -> moveDots_2dLife(VelocityX=-3.53201914, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-360, right=360, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #45 -> wrapAroundDots(Left=-360, Right=360, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #6, #7 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #1
                    ExternalizedMapping(numDots) => #2
                    #1, #2 -> GenerateDotField(numDots=180, left=-360, right=360, top=90, bottom=-90, rndseed=3) => #3
                    ExternalizedMapping(dotLifetime) => #4
                    #4, #2 -> GenerateDotLives(dotLifetime=600, numDots=180) => #5
                    #3, #5 -> Zip => #6
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #8
                    ExternalizedMapping(LocationX) => #9
                    ExternalizedMapping(LocationY) => #10
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4)
                    -> PropertyMapping(ExtentX, ExtentY) => #13
                    #8, #9, #10, #13 -> GroupWorkflow Transform => #14
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(X(DisplayName=LocationX)) => #1
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                        #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #3
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                        #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=4, Y=4, Z=1) => #6
                        ExternalizedMapping(Angle) => #7
                        #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    FloatProperty(Value=0) => #15
                    -> PropertyMapping(X) => #16
                    #15 -> PropertyMapping(Y) => #17
                    ExternalizedMapping(Z) => #18
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #21
                    #14, #16, #17, #18, #21 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #23
                    #6, #23 -> CombineLatest => #24
                    #24, #23 -> Sample
                    -> MemberSelector(Selector=Item1) => #26
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.53201914)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #30
                    ExternalizedMapping(DueTime) => #31
                    #30, #31 -> Delay(DueTime=PT0S) => #32
                    FloatProperty(Value=0) => #33
                    #32, #33 -> Merge
                    -> PropertyMapping(VelocityX) => #35
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #39
                    #39, #31 -> Delay(DueTime=PT0S) => #40
                    #40, #33 -> Merge
                    -> PropertyMapping(VelocityY) => #42
                    ExternalizedMapping(Coherence) => #43
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #45
                    ExternalizedMapping(dotLifetimeBool) => #46
                    #26, #35, #42, #43, #45, #4, #46 -> moveDots_2dLife(VelocityX=-3.53201914, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-360, right=360, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #45 -> wrapAroundDots(Left=-360, Right=360, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #8, #13, #14, #15 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohRight)
            -> PropertyMapping(Coherence) => #74
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelYRight) => #76
            #76, #53 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #79
            #48, #50, #68, #74, #79 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                ExternalizedMapping(VelX, VelY) => #6
                ExternalizedMapping(DueTime) => #7
                #0, #1, #5, #6, #7 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #8
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #1
                    ExternalizedMapping(numDots) => #2
                    ExternalizedMapping(rndseed) => #3
                    #1, #2, #3 -> GenerateDotField(numDots=180, left=-360, right=360, top=90, bottom=-90, rndseed=0) => #4
                    ExternalizedMapping(dotLifetime) => #5
                    #5, #2 -> GenerateDotLives(dotLifetime=600, numDots=180) => #6
                    #4, #6 -> Zip => #7
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #9
                    ExternalizedMapping(LocationX) => #10
                    ExternalizedMapping(LocationY) => #11
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4)
                    -> PropertyMapping(ExtentX, ExtentY) => #14
                    #9, #10, #11, #14 -> GroupWorkflow Transform => #15
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(X(DisplayName=LocationX)) => #1
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                        #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #3
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                        #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=4, Y=4, Z=1) => #6
                        ExternalizedMapping(Angle) => #7
                        #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    FloatProperty(Value=0) => #16
                    -> PropertyMapping(X) => #17
                    #16 -> PropertyMapping(Y) => #18
                    ExternalizedMapping(Z) => #19
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #22
                    #15, #17, #18, #19, #22 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #24
                    #7, #24 -> CombineLatest => #25
                    #25, #24 -> Sample
                    -> MemberSelector(Selector=Item1) => #27
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.53201914)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #31
                    ExternalizedMapping(DueTime) => #32
                    #31, #32 -> Delay(DueTime=PT0S) => #33
                    FloatProperty(Value=0) => #34
                    #33, #34 -> Merge
                    -> PropertyMapping(VelocityX) => #36
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #40
                    #40, #32 -> Delay(DueTime=PT0S) => #41
                    #41, #34 -> Merge
                    -> PropertyMapping(VelocityY) => #43
                    ExternalizedMapping(Coherence) => #44
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #46
                    ExternalizedMapping(dotLifetimeBool) => #47
                    #27, #36, #43, #44, #46, #5, #47 -> moveDots_2dLife(VelocityX=-3.53201914, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-360, right=360, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #49
                    #49, #46 -> wrapAroundDots(Left=-360, Right=360, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots2)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #12
                #0, #1, #12, #6, #7 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #1
                    ExternalizedMapping(numDots) => #2
                    #1, #2 -> GenerateDotField(numDots=180, left=-360, right=360, top=90, bottom=-90, rndseed=1) => #3
                    ExternalizedMapping(dotLifetime) => #4
                    #4, #2 -> GenerateDotLives(dotLifetime=600, numDots=180) => #5
                    #3, #5 -> Zip => #6
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #8
                    ExternalizedMapping(LocationX) => #9
                    ExternalizedMapping(LocationY) => #10
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4)
                    -> PropertyMapping(ExtentX, ExtentY) => #13
                    #8, #9, #10, #13 -> GroupWorkflow Transform => #14
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(X(DisplayName=LocationX)) => #1
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                        #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #3
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                        #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=4, Y=4, Z=1) => #6
                        ExternalizedMapping(Angle) => #7
                        #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    FloatProperty(Value=1) => #15
                    -> PropertyMapping(X) => #16
                    #15 -> PropertyMapping(Y) => #17
                    #15 -> PropertyMapping(Z) => #18
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #21
                    #14, #16, #17, #18, #21 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #23
                    #6, #23 -> CombineLatest => #24
                    #24, #23 -> Sample
                    -> MemberSelector(Selector=Item1) => #26
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.53201914)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #30
                    ExternalizedMapping(DueTime) => #31
                    #30, #31 -> Delay(DueTime=PT0S) => #32
                    FloatProperty(Value=0) => #33
                    #32, #33 -> Merge
                    -> PropertyMapping(VelocityX) => #35
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #39
                    #39, #31 -> Delay(DueTime=PT0S) => #40
                    #40, #33 -> Merge
                    -> PropertyMapping(VelocityY) => #42
                    ExternalizedMapping(Coherence) => #43
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #45
                    ExternalizedMapping(dotLifetimeBool) => #46
                    #26, #35, #42, #43, #45, #4, #46 -> moveDots_2dLife(VelocityX=-3.53201914, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-360, right=360, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #45 -> wrapAroundDots(Left=-360, Right=360, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #12, #6, #7 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #1
                    ExternalizedMapping(numDots) => #2
                    #1, #2 -> GenerateDotField(numDots=180, left=-360, right=360, top=90, bottom=-90, rndseed=2) => #3
                    ExternalizedMapping(dotLifetime) => #4
                    #4, #2 -> GenerateDotLives(dotLifetime=600, numDots=180) => #5
                    #3, #5 -> Zip => #6
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #8
                    ExternalizedMapping(LocationX) => #9
                    ExternalizedMapping(LocationY) => #10
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4)
                    -> PropertyMapping(ExtentX, ExtentY) => #13
                    #8, #9, #10, #13 -> GroupWorkflow Transform => #14
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(X(DisplayName=LocationX)) => #1
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                        #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #3
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                        #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=4, Y=4, Z=1) => #6
                        ExternalizedMapping(Angle) => #7
                        #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    FloatProperty(Value=1) => #15
                    -> PropertyMapping(X) => #16
                    #15 -> PropertyMapping(Y) => #17
                    #15 -> PropertyMapping(Z) => #18
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #21
                    #14, #16, #17, #18, #21 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #23
                    #6, #23 -> CombineLatest => #24
                    #24, #23 -> Sample
                    -> MemberSelector(Selector=Item1) => #26
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.53201914)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #30
                    ExternalizedMapping(DueTime) => #31
                    #30, #31 -> Delay(DueTime=PT0S) => #32
                    FloatProperty(Value=0) => #33
                    #32, #33 -> Merge
                    -> PropertyMapping(VelocityX) => #35
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #39
                    #39, #31 -> Delay(DueTime=PT0S) => #40
                    #40, #33 -> Merge
                    -> PropertyMapping(VelocityY) => #42
                    ExternalizedMapping(Coherence) => #43
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #45
                    ExternalizedMapping(dotLifetimeBool) => #46
                    #26, #35, #42, #43, #45, #4, #46 -> moveDots_2dLife(VelocityX=-3.53201914, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-360, right=360, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #45 -> wrapAroundDots(Left=-360, Right=360, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #6, #7 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #1
                    ExternalizedMapping(numDots) => #2
                    #1, #2 -> GenerateDotField(numDots=180, left=-360, right=360, top=90, bottom=-90, rndseed=3) => #3
                    ExternalizedMapping(dotLifetime) => #4
                    #4, #2 -> GenerateDotLives(dotLifetime=600, numDots=180) => #5
                    #3, #5 -> Zip => #6
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #8
                    ExternalizedMapping(LocationX) => #9
                    ExternalizedMapping(LocationY) => #10
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4)
                    -> PropertyMapping(ExtentX, ExtentY) => #13
                    #8, #9, #10, #13 -> GroupWorkflow Transform => #14
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(X(DisplayName=LocationX)) => #1
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                        #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #3
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                        #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=4, Y=4, Z=1) => #6
                        ExternalizedMapping(Angle) => #7
                        #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    FloatProperty(Value=0) => #15
                    -> PropertyMapping(X) => #16
                    #15 -> PropertyMapping(Y) => #17
                    ExternalizedMapping(Z) => #18
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #21
                    #14, #16, #17, #18, #21 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #23
                    #6, #23 -> CombineLatest => #24
                    #24, #23 -> Sample
                    -> MemberSelector(Selector=Item1) => #26
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.53201914)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #30
                    ExternalizedMapping(DueTime) => #31
                    #30, #31 -> Delay(DueTime=PT0S) => #32
                    FloatProperty(Value=0) => #33
                    #32, #33 -> Merge
                    -> PropertyMapping(VelocityX) => #35
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #39
                    #39, #31 -> Delay(DueTime=PT0S) => #40
                    #40, #33 -> Merge
                    -> PropertyMapping(VelocityY) => #42
                    ExternalizedMapping(Coherence) => #43
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #45
                    ExternalizedMapping(dotLifetimeBool) => #46
                    #26, #35, #42, #43, #45, #4, #46 -> moveDots_2dLife(VelocityX=-3.53201914, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-360, right=360, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #45 -> wrapAroundDots(Left=-360, Right=360, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #8, #13, #14, #15 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight

            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelXRight)

            Disable SubscribeSubject DrawQuad
            -> Disable IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=90, Top=-30) => #86
            Disable SubscribeSubject QuadState => #87
            -> Disable PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #88
            #86, #88 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=5.7
              LocationY=11
              Layer=-1
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
            Disable SubscribeSubject Draw3DQuad => #90
            #87 -> Disable PropertyMapping(Ambient(Selector=it), Diffuse(Selector=it), Specular(Selector=it)) => #91
            #90, #91 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=60
              TranslationY=-33
              TranslationZ=-70
              ScaleX=1
              ScaleY=70
              ScaleZ=100
              MeshName=cube3d
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=0
              RotationZ=0
              RotationY=0
              RotationX=0

            Disable SubscribeSubject Draw3DStim
            -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=0
              TranslationY=0
              TranslationZ=-25
              ScaleX=1000
              ScaleY=2500
              ScaleZ=0
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=0
              RotationZ=0
              RotationY=0
              RotationX=0
            -> Disable StringProperty(Value="Background plane (stops flickering)")

            Disable SubscribeSubject Draw3DStim
            -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=0
              TranslationY=40
              TranslationZ=-7
              ScaleX=300
              ScaleY=25
              ScaleZ=0
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=0
              RotationZ=0
              RotationY=0
              RotationX=0
            -> Disable StringProperty(Value="ceiling mask for pole")
        -> Unit
        -> WorkflowOutput
    -> Concat
    -> RepeatCount(Count=1)
    -> WorkflowOutput
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #10
#9, #10 -> SubscribeWhen
GroupWorkflow ControlQuad
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=200000, Upper=500000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.0283412S)
    -> Repeat
    -> IntProperty(Value=1)
    -> Accumulate
    -> Mod(Operand=IntProperty(Value=2)) => #8
    IntProperty(Value=1) => #9
    #8, #9 -> Merge
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> WorkflowOutput
-> MulticastSubject QuadState => #13
#13, #10 -> SubscribeWhen

Bonsai.Shaders.UpdateFrame
-> PublishSubject DrawQuad

ExternalizedMapping(StimulusID(Category=Filename), MouseID(Category=Filename), SavingDirBase(Category=Filename), SessionID(Category=Filename))
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=ReplayLoop) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=edd_test) => #3
    ExternalizedMapping(Value(DisplayName=SavingDirBase))
    -> StringProperty(Value="C:\Users\Bendor Lab\Documents\data") => #5
    SubscribeSubject DateDir => #6
    ExternalizedMapping(Value(DisplayName=SessionID))
    -> StringProperty(Value=0_1) => #8
    #1, #3, #5, #6, #8 -> Zip
    -> Format(Format={2}\Data\{1}\{3}\{1}_{3}_{4}_{0}\{1}_{3}_{4}_{0}, Selector="Item1,Item2,Item3,Item4,Item5")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix => #12
    -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #12 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
    #12 -> Format(Format={0}_Video.csv, Selector=it)
    -> BehaviorSubject VideoCSVName
    #12 -> Format(Format={0}_Video.avi, Selector=it)
    -> BehaviorSubject BodyVideoName
    #12 -> Format(Format={0}_ArduinoStim.csv, Selector=it)
    -> BehaviorSubject PWMCSVName
    #12 -> Format(Format={0}_PDLog.csv, Selector=it)
    -> BehaviorSubject PDname
    #12 -> Format(Format={0}_PeripheralLog.csv, Selector=it)
    -> BehaviorSubject PeriName
    #12 -> Format(Format={0}_WheelReplay.csv, Selector=it)
    -> BehaviorSubject WheelReplayName

    Bonsai.Scripting.IronPython.PythonSource
      Script:
        from System import DateTime,String

        @returns(String)
        def generate():
          yield (DateTime.Now).ToString("yyyyMMdd")
    -> BehaviorSubject DateDir

GroupWorkflow Logging => #19
    GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
        SubscribeSubject VideoCSVName
        -> PropertyMapping(FileName) => #1
        ExternalizedMapping(Overwrite) => #2
        ExternalizedMapping(Suffix) => #3
        SubscribeSubject VideoLog => #4
        #1, #2, #3, #4 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Bendor Lab\Documents\data\Data\edd_test\20261109\edd_test_20261109_0_1_ClosedLoop\edd_test_20261109_0_1_ClosedLoop_Video.csv"
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        SubscribeSubject "Device Events"
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame)
        -> MemberSelector(Selector=Seconds) => #8
        Disable Bonsai.Spinnaker.SpinnakerCapture(Index=0, SerialNumber=26312603, ColorProcessing=Default)
        -> Aeon.Video.SpinnakerCapture(Index=nil, SerialNumber=26312603, ColorProcessing=Default, ExposureTime=15000, Gain=10, Binning=1)
        -> MemberSelector(Selector=Image)
        -> Bonsai.Vision.Flip(Mode=Both)
        -> Bonsai.Vision.Crop(RegionOfInterest(X=109, Y=6, Width=774, Height=1074)) => #13
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Add(Operand=IntProperty(Value=1))
        -> BehaviorSubject CameraFrame => #17
        #8, #17 -> Zip => #18
        SubscribeSubject "Device Events"
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame)
        -> MemberSelector(Selector=Seconds) => #22
        #18, #22 -> WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item2 as HarpTimestamp, Item1.Item2 as CameraFrame)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item2 as HarpTimestamp, Item1.Item2 as CameraFrame)
        -> PublishSubject VideoLog
        SubscribeSubject BodyVideoName
        -> PropertyMapping(FileName) => #28
        #13, #28 -> Bonsai.Vision.VideoWriter
          FileName="C:\Users\Bendor Lab\Documents\data\Data\edd_test\20261109\edd_test_20261109_0_1_ClosedLoop\edd_test_20261109_0_1_ClosedLoop_Video.avi"
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=60
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        #13 -> Timestamp
        -> TimeInterval

    Disable GroupWorkflow "PeripheralLogger (1000Hz)"(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
        SubscribeSubject PeriName
        -> PropertyMapping(FileName) => #1
        ExternalizedMapping(Overwrite) => #2
        ExternalizedMapping(Suffix) => #3
        ExternalizedMapping(Name)
        -> SubscribeSubject PeripheralLog => #5
        #1, #2, #3, #5 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Bendor Lab\Documents\data\Data\Masa\20260618\Checkboard_Masa_PeripheralLog.csv"
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        SubscribeSubject "Device Events" => #7
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds) => #9
        #7 -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData) => #10
        -> MemberSelector(Selector=AnalogInput0) => #11
        #10 -> MemberSelector(Selector=Encoder)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression: Convert.ToInt32(it)
        -> Skip(Count=1) => #14
        #13, #14 -> Zip
        -> OverflowDifference
        -> Accumulate => #17
        #9, #11, #17 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as HarpTimestamp, Item2 as Photodiode, Item3 as Wheel, Item4 as RenderFrame, Item5 as CameraFrame)
        -> PublishSubject PeripheralLog

    GroupWorkflow PDLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
        SubscribeSubject PDname
        -> PropertyMapping(FileName) => #1
        ExternalizedMapping(Overwrite) => #2
        ExternalizedMapping(Suffix) => #3
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #5
        #1, #2, #3, #5 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Bendor Lab\Documents\data\Data\edd_test\20261109\edd_test_20261109_0_1_ClosedLoop\edd_test_20261109_0_1_ClosedLoop_PDLog.csv"
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        SubscribeSubject CameraFrame

        SubscribeSubject "Device Events" => #8
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds) => #10
        #8 -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData)
        -> MemberSelector(Selector=AnalogInput0) => #12
        #10, #12 -> Zip => #13
        SubscribeSubject QuadState => #14
        #13, #14 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as HarpTimestamp, Item1.Item2 as Photodiode,Item2 as QuadState)
        -> PublishSubject PDLog

    GroupWorkflow PeripheralLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
        SubscribeSubject PeriName
        -> PropertyMapping(FileName) => #1
        ExternalizedMapping(Overwrite) => #2
        ExternalizedMapping(Suffix) => #3
        ExternalizedMapping(Name)
        -> SubscribeSubject PeripheralLog => #5
        #1, #2, #3, #5 -> Bonsai.IO.CsvWriter
          FileName="C:\Users\Bendor Lab\Documents\data\Data\edd_test\20261109\edd_test_20261109_0_1_ClosedLoop\edd_test_20261109_0_1_ClosedLoop_PeripheralLog.csv"
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        GroupWorkflow CalcWheelSpeed => #7
            SubscribeSubject WheelInput => #0
            SubscribeSubject WheelTime => #1
            #0, #1 -> Zip => #2
            -> MemberSelector(Selector=Item1)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToSingle(it)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Disable Bonsai.Numerics.Abs
            -> Condition IgnoreOverflowTicks => #7
                WorkflowInput Source1
                -> Bonsai.Dsp.Abs
                -> LessThan(Operand=DoubleProperty(Value=512))
                -> WorkflowOutput
            SubscribeSubject cmPerTick => #8
            #7, #8 -> CombineLatest
            -> Multiply => #10
            #2 -> MemberSelector(Selector=Item2)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToSingle(it)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Divide(Operand=DoubleProperty(Value=1)) => #14
            #10, #14 -> Zip
            -> Divide
            -> BehaviorSubject RawWheelSpeed => #17
            ExternalizedMapping(TimeSpan(DisplayName=RunningAverageTimeWindow)) => #18
            #17, #18 -> WindowTime(TimeSpan=PT0.05S)
            -> SelectMany
                WorkflowInput Source1
                -> Average
                -> WorkflowOutput
            -> Retry
            -> Multiply(Operand=DoubleProperty(Value=-1))
            -> Disable BehaviorSubject MovMeanWheelSpeed => #23
            -> Disable Condition
                WorkflowInput Source1
                -> GreaterThan(Operand=DoubleProperty(Value=3))
                -> WorkflowOutput
            -> Disable IntProperty(Value=1) => #25
            #23 -> Disable Condition
                WorkflowInput Source1
                -> LessThanOrEqual(Operand=DoubleProperty(Value=3))
                -> WorkflowOutput
            -> Disable IntProperty(Value=0) => #27
            #25, #27 -> Disable Merge
            -> Disable BehaviorSubject CurrentState
            Disable SubscribeSubject WheelReplayName
            -> Disable PropertyMapping(FileName) => #31
            Disable ExternalizedMapping(Overwrite) => #32
            Disable ExternalizedMapping(Suffix) => #33
            #23 -> Disable Bonsai.Shaders.SampleOnRenderFrame
            -> Bonsai.Shaders.SampleOnUpdateFrame => #35
            #31, #32, #33, #35 -> Disable Bonsai.IO.CsvWriter => #36
              FileName="C:\Users\Bendor Lab\Documents\data\Data\edd_test\20261109\edd_test_20261109_0_1_ClosedLoop\edd_test_20261109_0_1_ClosedLoop_WheelReplay.csv"
              Delimiter=","
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=true
              Selector=""
            Disable Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #37
            #36, #37 -> Disable SubscribeWhen
            SubscribeSubject WheelToReplay => #39
            #35 -> IntProperty(Value=1)
            -> Accumulate => #41
            #39, #41 -> CombineLatest
            -> TakeWhile
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2) => #1
                #0 -> MemberSelector(Selector=Item1.Length) => #2
                #1, #2 -> CombineLatest
                -> LessThan
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1[Item2]
            -> BehaviorSubject MovMeanWheelSpeed => #45
            Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #46
            #45, #46 -> SubscribeWhen

            ExternalizedMapping(FileName)
            -> Bonsai.IO.CsvReader
              FileName: C:\Users\Bendor Lab\Documents\data\Data\edd_test\20261109\edd_test_20261109_0_1_ClosedLoop\edd_test_20261109_0_1_ClosedLoop_WheelReplay2026-11-09T15_47_33.csv
              SkipRows=0
            -> Skip(Count=1)
            -> Parse(Pattern=%d)
            -> ToArray
            -> BehaviorSubject WheelToReplay
            -> MemberSelector(Selector=Length)
            -> BehaviorSubject nFrames

            ExternalizedMapping(Value(DisplayName=WheelDiam))
            -> FloatProperty(Value=19.5) => #57
            FloatProperty(Value=3.14159274) => #58
            #57, #58 -> CombineLatest
            -> Multiply
            -> BehaviorSubject WheelCircumference => #61
            ExternalizedMapping(Value(DisplayName=TicksPerRev))
            -> FloatProperty(Value=4096) => #63
            #61, #63 -> CombineLatest
            -> Divide
            -> BehaviorSubject cmPerTick
        SubscribeSubject "Device Events" => #8
        -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData) => #9
        -> MemberSelector(Selector=Encoder)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #11
          Expression: Convert.ToInt32(it)
        -> Skip(Count=1) => #12
        #11, #12 -> Zip
        -> OverflowDifference
        -> Accumulate
        -> BehaviorSubject WheelInput => #16
        #7, #16 -> SubscribeWhen
        SubscribeSubject "Device Events"
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame)
        -> MemberSelector(Selector=Seconds) => #20
        #8 -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds)
        -> BehaviorSubject WheelTime => #23
        #9 -> MemberSelector(Selector=AnalogInput0) => #24
        #23, #24, #16 -> Zip => #25
        #20, #25 -> WithLatestFrom => #26
        SubscribeSubject RenderFrameCount => #27
        #26, #27 -> WithLatestFrom => #28
        SubscribeSubject WheelGain => #29
        #28, #29 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1.Item2.Item1 as HarpTimestamp, Item1.Item1.Item2.Item2 as Photodiode, Item1.Item1.Item2.Item3 as Wheel, Item1.Item2 as RenderFrame, Item2 as WheelGain)
        -> PublishSubject PeripheralLog

        Disable SubscribeSubject "Device Events" => #33
        -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> Disable MemberSelector(Selector=Seconds) => #35
        #33 -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData) => #36
        -> Disable MemberSelector(Selector=AnalogInput0) => #37
        #36 -> Disable MemberSelector(Selector=Encoder)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #39
          Expression: Convert.ToInt32(it)
        -> Disable Skip(Count=1) => #40
        #39, #40 -> Disable Zip
        -> Disable OverflowDifference
        -> Disable Accumulate => #43
        Disable SubscribeSubject RenderFrameCount => #44
        #35, #37, #43, #44 -> Disable Zip => #45
        Disable SubscribeSubject RenderFrameCount => #46
        #45, #46 -> Disable WithLatestFrom => #47
        Disable SubscribeSubject "Device Events"
        -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame)
        -> Disable MemberSelector(Selector=Seconds) => #50
        #47, #50 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item2 as HarpTimestamp, Item1.Item1.Item2 as Photodiode, Item1.Item1.Item3 as Wheel, Item1.Item2 as RenderFrame)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item2 as HarpTimestamp, Item1.Item2 as Photodiode, Item1.Item3 as Wheel, Item1.Item4 as RenderFrame)
        -> Disable PublishSubject PeripheralLog

        SubscribeSubject "Device Events"
        -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData)
        -> MemberSelector(Selector=AnalogInput0)
Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=true) => #20
#19, #20 -> SubscribeWhen

GroupWorkflow Quad
    GroupWorkflow "Black quad" => #0
        SubscribeSubject DrawQuadSubject
        -> FloatProperty(Value=0)
        -> WorkflowOutput
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=300000, Upper=600000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.042137S)
    -> Unit => #6
    #0, #6 -> TakeUntil => #7
    GroupWorkflow "White quad" => #8
        SubscribeSubject DrawQuadSubject
        -> FloatProperty(Value=1)
        -> WorkflowOutput
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=300000, Upper=600000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.0391607S)
    -> Unit => #14
    #8, #14 -> TakeUntil => #15
    #7, #15 -> Concat
    -> Repeat
    -> MulticastSubject QuadState => #18
    -> WorkflowOutput
    #18 -> Disable PropertyMapping(Ambient) => #20
    Disable SubscribeSubject Draw3DStim => #21
    #20, #21 -> Disable IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=20
      TranslationY=-5.5
      TranslationZ=-1000
      RotationZ=0
      RotationY=0
      RotationX=0
      ScaleX=100
      ScaleY=10
      ScaleZ=10000
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=0
      MeshName=cube3d
    SubscribeSubject PostDrawingRight
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #24
    #18 -> PropertyMapping(ColorR(Selector=it)) => #25
    #24, #25 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=0.2
      ExtentY=0.2
      LocationX=0.88
      LocationY=-0.83
      Layer=1
      Angle=0
      ColorR=1
      ColorG=0
      ColorB=0
      ColorA=1

GroupWorkflow "Harp based Camera Trigger"
  Description:
    Harp based Camera Trigger

    Press Shift + L to start camera (start experiment)
    Press Shift + T to stop camera (end experiment)
  Workflow
    Annotation 2(Text="") => #0
    ExternalizedMapping(Camera0Frequency) => #1
    #0, #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=60)) => #2
    Annotation 3(Text="")
    -> Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=true)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #5
    Disable Annotation 4(Text="")
    -> Disable Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock D P T Shift", SuppressRepetitions=true)
    -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #8
    #2, #5, #8 -> Merge
    -> MulticastSubject "Device Commands"
    -> WorkflowOutput

GroupWorkflow HarpBehaviorReset
    BehaviorSubject<Bonsai.Harp.HarpMessage> "Device Commands"
    -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM9)
    -> PublishSubject "Device Events"
    -> WorkflowOutput

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #4
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2)) => #5
    #4, #5 -> Merge
    -> MulticastSubject "Device Commands" => #7
    SubscribeSubject "Device Events" => #8
    #7, #8 -> SubscribeWhen
