WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(DisplayDevice, WindowState)
-> GroupWorkflow DisplayAndResources
    ExternalizedMapping(DisplayDevice, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=1280
      Height=800
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\smoothed_fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\smoothed_fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\smoothed_fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\smoothed_fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=2x2_checkerboard_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\2x2_checkerboard_50contrast.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=135Grat_6_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\135Grat_6_50contrast.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=big_triangle_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\big_triangle_50contrast.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=135Grat_1_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\135Grat_1_50contrast.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Circle_horBar_white_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\Circle_horBar_white_50contrast.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=big_triangle_outline_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\big_triangle_outline_50contrast.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=big_triangle_white_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\big_triangle_white_50contrast.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Circle_horBar_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\Circle_horBar_50contrast.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=brick_white_6_rows_clean_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\brick_white_6_rows_clean_50contrast.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=VertGrat_12_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\VertGrat_12_50contrast.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=lm_dots
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\landmarks12\lm_dots.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white bar__50contrast"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\onix\white bar__50contrast.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=lm_radial
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\landmarks12\lm_radial.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=lm_spots
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\landmarks12\lm_spots.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=lm_diag45
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\landmarks12\lm_diag45.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=lm_crosses
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\landmarks12\lm_crosses.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=lm_rings
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\landmarks12\lm_rings.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black cross__50contrast"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\onix\black cross__50contrast.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=lm_vbars
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\landmarks12\lm_vbars.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=lm_bricks
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\landmarks12\lm_bricks.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=lm_diamond
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\landmarks12\lm_diamond.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white cross__50contrast"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\onix\white cross__50contrast.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black bar__50contrast"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\onix\black bar__50contrast.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=45Grat_12_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\45Grat_12_50contrast.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern white 1_50contrast"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\onix\dot pattern white 1_50contrast.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid_6_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\plaid_6_50contrast.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black plus__50contrast"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\onix\black plus__50contrast.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white plus__50contrast"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\onix\white plus__50contrast.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern black 1_50contrast"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\onix\dot pattern black 1_50contrast.png"
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Resources.LoadResources

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=20, Light(X=0, Y=0, Z=0))
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=#404040, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=32, Height=20, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10.505))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)

Bonsai.IO.CsvReader(FileName=onix_all_tracks_trials.csv, ListSeparator=",", SkipRows=0)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: new(double.Parse(it[0]) as Start, double.Parse(it[1]) as End)
-> CreateObservable Trial
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Start)
    -> BehaviorSubject Startpos
    #0 -> MemberSelector(Selector=End)
    -> BehaviorSubject Endpos

    GroupWorkflow "Track Trial"
        Bonsai.Shaders.Input.MouseCursor
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> MemberSelector(Selector=WheelPrecise)
        -> Bonsai.Dsp.Difference(Order=1) => #3
        ExternalizedMapping(Value(DisplayName=Gain)) => #4
        #3, #4 -> Multiply(Operand=DoubleProperty(Value=3))
        -> Accumulate
        -> Condition => #7
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #9
        #7, #9 -> Add(Operand=DoubleProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> BehaviorSubject MousePos
        -> TakeWhile
            WorkflowInput Source1 => #0
            SubscribeSubject Endpos
            -> PropertyMapping(Value) => #2
            #0, #2 -> LessThan(Operand=FloatProperty(Value=140))
            -> WorkflowOutput
        -> Last
        -> WorkflowOutput
    -> WorkflowOutput

    GroupWorkflow "Track Textures"
        GroupWorkflow "Track A1 (onix_two_tracks_A)" => #0
            GroupWorkflow "Track A1 (onix_two_tracks_A) Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=8
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-2
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T1 @ 30 cm (2x2_checkerboard_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-30
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=2x2_checkerboard_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=2x2_checkerboard_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=2x2_checkerboard_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=2x2_checkerboard_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T2 @ 50 cm (135Grat_6_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-50
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=135Grat_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=135Grat_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=135Grat_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=135Grat_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T3 @ 70 cm (big_triangle_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=big_triangle_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=0
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=big_triangle_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=0
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=big_triangle_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=big_triangle_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T4 @ 90 cm (135Grat_1_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-90
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=135Grat_1_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=135Grat_1_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=135Grat_1_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=135Grat_1_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T5 @ 110 cm (Circle_horBar_white_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-110
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_white_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_white_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_white_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_white_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T6 @ 130 cm (big_triangle_outline_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-130
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=big_triangle_outline_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=0
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=big_triangle_outline_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=0
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=big_triangle_outline_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=big_triangle_outline_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
        SubscribeSubject Startpos => #1
        -> LessThan(Operand=DoubleProperty(Value=140)) => #2
        #1 -> GreaterThan(Operand=DoubleProperty(Value=-1)) => #3
        #2, #3 -> Zip
        -> Condition => #5
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #0, #5 -> SubscribeWhen

        GroupWorkflow "Track A2 (onix_two_tracks_A)" => #7
            GroupWorkflow "Track A2 (onix_two_tracks_A) Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=8
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-2
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T1 @ 30 cm (big_triangle_white_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1030
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=big_triangle_white_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=0
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=big_triangle_white_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=0
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=big_triangle_white_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=big_triangle_white_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T2 @ 50 cm (Circle_horBar_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1050
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Circle_horBar_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T3 @ 70 cm (brick_white_6_rows_clean_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_white_6_rows_clean_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=0
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_white_6_rows_clean_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=0
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_white_6_rows_clean_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=brick_white_6_rows_clean_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T4 @ 90 cm (VertGrat_12_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1090
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=VertGrat_12_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=VertGrat_12_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=VertGrat_12_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=VertGrat_12_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T5 @ 110 cm (lm_dots)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1110
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_dots, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_dots, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_dots, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_dots, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T6 @ 130 cm (white bar__50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1130
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
        SubscribeSubject Startpos => #8
        -> LessThan(Operand=DoubleProperty(Value=1140)) => #9
        #8 -> GreaterThan(Operand=DoubleProperty(Value=999)) => #10
        #9, #10 -> Zip
        -> Condition => #12
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #7, #12 -> SubscribeWhen

        GroupWorkflow "Track B1 (onix_two_tracks_B)" => #14
            GroupWorkflow "Track B1 (onix_two_tracks_B) Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=8
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-2
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T1 @ 30 cm (lm_radial)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-30
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_radial, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_radial, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_radial, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_radial, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T2 @ 50 cm (lm_spots)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-50
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_spots, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_spots, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_spots, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_spots, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T3 @ 70 cm (lm_diag45)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_diag45, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_diag45, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_diag45, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_diag45, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T4 @ 90 cm (lm_crosses)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-90
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_crosses, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_crosses, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_crosses, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_crosses, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T5 @ 110 cm (lm_rings)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-110
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_rings, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_rings, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_rings, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_rings, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T6 @ 130 cm (black cross__50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-130
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
        SubscribeSubject Startpos => #15
        -> LessThan(Operand=DoubleProperty(Value=140)) => #16
        #15 -> GreaterThan(Operand=DoubleProperty(Value=-1)) => #17
        #16, #17 -> Zip
        -> Condition => #19
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #14, #19 -> SubscribeWhen

        GroupWorkflow "Track B2 (onix_two_tracks_B)" => #21
            GroupWorkflow "Track B2 (onix_two_tracks_B) Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=8
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-2
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T1 @ 30 cm (lm_vbars)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1030
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_vbars, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_vbars, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_vbars, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_vbars, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T2 @ 50 cm (lm_bricks)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1050
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_bricks, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=0
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_bricks, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=0
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_bricks, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_bricks, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T3 @ 70 cm (lm_diamond)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_diamond, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_diamond, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_diamond, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=lm_diamond, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T4 @ 90 cm (white cross__50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1090
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T5 @ 110 cm (black bar__50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1110
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T6 @ 130 cm (45Grat_12_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1130
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=45Grat_12_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=45Grat_12_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=45Grat_12_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=45Grat_12_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
        SubscribeSubject Startpos => #22
        -> LessThan(Operand=DoubleProperty(Value=1140)) => #23
        #22 -> GreaterThan(Operand=DoubleProperty(Value=999)) => #24
        #23, #24 -> Zip
        -> Condition => #26
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #21, #26 -> SubscribeWhen

        GroupWorkflow "Track SM1 (onix_two_tracks_SM)" => #28
            GroupWorkflow "Track SM1 (onix_two_tracks_SM) Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=8
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-2
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T1 @ 30 cm (dot pattern white 1_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-30
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T2 @ 50 cm (plaid_6_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-50
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T3 @ 70 cm (black plus__50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T4 @ 90 cm (plaid_6_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-90
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T5 @ 110 cm (black plus__50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-110
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
        SubscribeSubject Startpos => #29
        -> LessThan(Operand=DoubleProperty(Value=140)) => #30
        #29 -> GreaterThan(Operand=DoubleProperty(Value=-1)) => #31
        #30, #31 -> Zip
        -> Condition => #33
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #28, #33 -> SubscribeWhen

        GroupWorkflow "Track SM2 (onix_two_tracks_SM)" => #35
            GroupWorkflow "Track SM2 (onix_two_tracks_SM) Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=8
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-2
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T1 @ 30 cm (white plus__50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1030
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T2 @ 50 cm (plaid_6_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1050
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T3 @ 70 cm (dot pattern black 1_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T4 @ 90 cm (plaid_6_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1090
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T5 @ 110 cm (dot pattern black 1_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1110
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
        SubscribeSubject Startpos => #36
        -> LessThan(Operand=DoubleProperty(Value=1140)) => #37
        #36 -> GreaterThan(Operand=DoubleProperty(Value=999)) => #38
        #37, #38 -> Zip
        -> Condition => #40
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #35, #40 -> SubscribeWhen
-> Concat
-> Repeat
