WorkflowBuilder(Version=2.9.1)
ExternalizedMapping(DisplayDevice, WindowState)
-> GroupWorkflow DisplayAndResources
    ExternalizedMapping(DisplayDevice, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=1280
      Height=800
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\smoothed_fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\smoothed_fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\smoothed_fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\smoothed_fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern white 1_50contrast"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\onix\dot pattern white 1_50contrast.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid_6_50contrast
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\onix\plaid_6_50contrast.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black plus__50contrast"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\onix\black plus__50contrast.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white plus__50contrast"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\onix\white plus__50contrast.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern black 1_50contrast"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\onix\dot pattern black 1_50contrast.png"
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Resources.LoadResources

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=20, Light(X=0, Y=0, Z=0))
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=#404040, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=32, Height=20, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10.505))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)

Bonsai.IO.CsvReader(FileName=onix_two_tracks_SM_trials.csv, ListSeparator=",", SkipRows=0)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: new(double.Parse(it[0]) as Start, double.Parse(it[1]) as End)
-> CreateObservable Trial
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Start)
    -> BehaviorSubject Startpos
    #0 -> MemberSelector(Selector=End)
    -> BehaviorSubject Endpos

    GroupWorkflow "Track Trial"
        Bonsai.Shaders.Input.MouseCursor
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> MemberSelector(Selector=WheelPrecise)
        -> Bonsai.Dsp.Difference(Order=1) => #3
        ExternalizedMapping(Value(DisplayName=Gain)) => #4
        #3, #4 -> Multiply(Operand=DoubleProperty(Value=3))
        -> Accumulate
        -> Condition => #7
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #9
        #7, #9 -> Add(Operand=DoubleProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> BehaviorSubject MousePos
        -> TakeWhile
            WorkflowInput Source1 => #0
            SubscribeSubject Endpos
            -> PropertyMapping(Value) => #2
            #0, #2 -> LessThan(Operand=FloatProperty(Value=140))
            -> WorkflowOutput
        -> Last
        -> WorkflowOutput
    -> WorkflowOutput

    GroupWorkflow "Track Textures"
        GroupWorkflow "Track 1" => #0
            GroupWorkflow "Track 1 Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=8
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-2
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T1 @ 30 cm (dot pattern white 1_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-30
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern white 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T2 @ 50 cm (plaid_6_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-50
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T3 @ 70 cm (black plus__50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T4 @ 90 cm (plaid_6_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-90
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T5 @ 110 cm (black plus__50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-110
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
        SubscribeSubject Startpos => #1
        -> LessThan(Operand=DoubleProperty(Value=140)) => #2
        #1 -> GreaterThan(Operand=DoubleProperty(Value=-1)) => #3
        #2, #3 -> Zip
        -> Condition => #5
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #0, #5 -> SubscribeWhen

        GroupWorkflow "Track 2" => #7
            GroupWorkflow "Track 2 Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=8
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-2
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-5
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=10
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T1 @ 30 cm (white plus__50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1030
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus__50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T2 @ 50 cm (plaid_6_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1050
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T3 @ 70 cm (dot pattern black 1_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T4 @ 90 cm (plaid_6_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1090
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_6_50contrast, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "T5 @ 110 cm (dot pattern black 1_50contrast)"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it-1110
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=7.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot pattern black 1_50contrast", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4.98
                      TranslationY=3
                      TranslationZ=0
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=10
                      ScaleY=10
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
        SubscribeSubject Startpos => #8
        -> LessThan(Operand=DoubleProperty(Value=1140)) => #9
        #8 -> GreaterThan(Operand=DoubleProperty(Value=999)) => #10
        #9, #10 -> Zip
        -> Condition => #12
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #7, #12 -> SubscribeWhen
-> Concat
-> Repeat
